PsychoPy2experiment version="2020.2.6"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Avoidance
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Routines
  Routine comienzo
    TextComponent text
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        ¡BIENVENIDO/A!


        A continuación, vas a realizar una tarea en la que pasarás por diferentes fases. Cada vez que comiences una fase nueva, se te presentarán las instrucciones en las que se te explicará qué es lo que tienes que hacer.



        Pulsa la BARRA ESPACIADORA si estás preparado/a para comenzar a leer las instrucciones de la primera fase.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        sujeto = int(expInfo['participant'])

        #contracondi = str(sujeto - int((sujeto - 1)/12) * 12)
        counterbalance_row = [(sujeto - 1) % 6]

        def nested(name):
            return(eval(name))

        duracionesA = [4, 6, 8, 10, 12, 14, 16]
        duracionesB = [4, 6, 8, 10, 12, 14, 16]

        condicionesA = ['A1', 'A0']
        condicionesB = ['B2', 'B0']
        condition = ''
        LeftResponses = 20
        Indicator_Size = [20, 1.5]
        Indicator_Position = [0, -5]
        Indicator_Opacity = 0
        runout_position = [100, 5]
        OutResponse = 0

        duracionpre = 0.0
        transpaleft = 0
        transparight = 0
        volumen = 1
        premio = 0
        castigo = 0
        saltarelieve = 0

        azar = 0
        listaResp = listaTR = []
        NewResp = False
        trainCorrRespA = 0
        trainCorrRespB = 0
        trainIncorrRespA = 0
        trainIncorrRespB = 0
        trainRespC = 0
        testCorrRespA = 0
        testCorrRespB = 0
        testIncorrRespA = 0
        testIncorrRespB = 0
        testRespC = 0
        validResponses = ['q', 'Q', 'p', 'P']
        Respuesta = ""
        #TResp = 0.000
        TRespCorr = []
        TRespIncorr = []
        timelastresp = 0.0
        cuentapremios = 0.0
        totalReward = ""

        RelievePavA = 0
        RelievePavB = 0
        RelievePavC = []

        RelieveInstrA0 = RelieveInstrA1 = RelieveInstrB0 = RelieveInstrB2 = ''
        RelieveInstrC = []
        RelieveTestA_LM = RelieveTestA_NLM = RelieveTestB_LM = RelieveTestB_NLM = ''
        RelieveTestC_LM = RelieveTestC_NLM = ''

        juiPavA1 = 0
        juiPavA2 = 0
        juiPavB1 = 0
        juiPavB2 = 0
        juiPavC1 = 0
        juiPavC2 = 0

        juiInstrA1 = 0
        juiInstrA2 = 0
        juiInstrB1 = 0
        juiInstrB2 = 0
        juiInstrC1 = 0
        juiInstrC2 = 0

        AverJuiRecall = 0
        AverJuiDeval = 0

        juiTestA1 = 0
        juiTestA2 = 0
        juiTestB1 = 0
        juiTestB2 = 0
        juiTestC1 = 0
        juiTestC2 = 0

        takeRightSound = 0
        takeLeftSound = 0

        RecallMsg = ''
        DevalMsg = ''
        ScoreLeft = '50'
        ScoreRight = '50'
        RatingCheckDev = 0
        RatingCheckNondev = 0
        LimitPresenceMsg = ''
        ConfiRatingSinA = ConfiRatingSinB = ConfiRatingSinC = 0
        ConfiRatingConA = ConfiRatingConB = ConfiRatingConC = 0
        FinalAverRating = FinalRelieve = 0

        if sujeto % 2 == 0:
            RecallMsg = 'derecho'
            DevalMsg = 'izquierdo'
        else:
            RecallMsg = 'izquierdo'
            DevalMsg = 'derecho'
      Begin Routine:
        win.mouseVisible = False
Flow
  Routine comienzo
