PsychoPy2experiment version="2020.2.6"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001', 'Sexo (H/M)': '', 'Edad': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = cm
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = AvoidanceRelieve
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Routines
  Routine comienzo
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        win.mouseVisible = False
        sujeto = int(expInfo['participant'])

        #contracondi = str(sujeto - int((sujeto - 1)/12) * 12)
        counterbalance_row = [(sujeto - 1) % 6]

        def nested(name):
            return(eval(name))

        duracionesA = [4, 6, 8, 10, 12, 14, 16]
        duracionesB = [4, 6, 8, 10, 12, 14, 16]

        condicionesA = ['A1', 'A0']
        condicionesB = ['B2', 'B0']
        condition = ''
        LeftResponses = 20
        Indicator_Size = [20, 1.5]
        Indicator_Position = [0, -5]
        Indicator_Opacity = 0
        runout_position = [100, 5]
        OutResponse = 0

        duracionpre = 0.0
        transpaleft = 0
        transparight = 0
        volumen = 1
        premio = 0
        castigo = 0
        saltarelieve = 0

        azar = 0
        listaResp = listaTR = []
        NewResp = False
        trainCorrRespA = 0
        trainCorrRespB = 0
        trainIncorrRespA = 0
        trainIncorrRespB = 0
        trainRespC = 0
        testCorrRespA = 0
        testCorrRespB = 0
        testIncorrRespA = 0
        testIncorrRespB = 0
        testRespC = 0
        validResponses = ['q', 'Q', 'p', 'P']
        Respuesta = ""
        #TResp = 0.000
        TRespCorr = []
        TRespIncorr = []
        timelastresp = 0.0
        cuentapremios = 0.0
        totalReward = ""

        RelievePavA = 0
        RelievePavB = 0
        RelievePavC = []

        RelieveInstrA0 = RelieveInstrA1 = RelieveInstrB0 = RelieveInstrB2 = ''
        RelieveInstrC = []
        RelieveTestA_LM = RelieveTestA_NLM = RelieveTestB_LM = RelieveTestB_NLM = ''
        RelieveTestC_LM = RelieveTestC_NLM = ''

        juiPavA1 = 0
        juiPavA2 = 0
        juiPavB1 = 0
        juiPavB2 = 0
        juiPavC1 = 0
        juiPavC2 = 0

        juiInstrA1 = 0
        juiInstrA2 = 0
        juiInstrB1 = 0
        juiInstrB2 = 0
        juiInstrC1 = 0
        juiInstrC2 = 0

        AverJuiRecall = 0
        AverJuiDeval = 0

        juiTestA1 = 0
        juiTestA2 = 0
        juiTestB1 = 0
        juiTestB2 = 0
        juiTestC1 = 0
        juiTestC2 = 0

        takeRightSound = 0
        takeLeftSound = 0

        RecallMsg = ''
        DevalMsg = ''
        ScoreLeft = '50'
        ScoreRight = '50'
        RatingCheckDev = 0
        RatingCheckNondev = 0
        LimitPresenceMsg = ''
        ConfiRatingSinA = ConfiRatingSinB = ConfiRatingSinC = 0
        ConfiRatingConA = ConfiRatingConB = ConfiRatingConC = 0
        FinalAverRating = FinalRelieve = 0

        if sujeto % 2 == 0:
            RecallMsg = 'derecho'
            DevalMsg = 'izquierdo'
        else:
            RecallMsg = 'izquierdo'
            DevalMsg = 'derecho'
      Begin Routine:
        win.mouseVisible = False
    TextComponent text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        ¡BIENVENIDO/A!


        A continuación, vas a realizar una tarea en la que pasarás por diferentes fases. Cada vez que comiences una fase nueva, se te presentarán las instrucciones en las que se te explicará qué es lo que tienes que hacer.



        Pulsa la BARRA ESPACIADORA si estás preparado/a para comenzar a leer las instrucciones de la primera fase.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine fix_ED
    TextComponent fijacion
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        saltarelieve = 0

        if condicion == 'A1':
            azar = randint(0, len(duracionesA))
            duracionpre = duracionesA[azar]
            del duracionesA[azar]

        if condicion == 'B2':
            azar = randint(0, len(duracionesB))
            duracionpre = duracionesB[azar]
            del duracionesB[azar]

        if condicion in ['A1', 'B2']:
            castigo = 1
            volumen = 1
        else:
            castigo = 0
            volumen = 0


        #totalReward = str("{:3.2f}".format(cuentapremios))
        #Reinforcement_trials.finished = True
      Each Frame:
        if Response.keys in validResponses:
            #TResp = Response.rt
            if Response.keys in ['p', 'P']: Respuesta = 'p'
            if Response.keys in ['q', 'Q']: Respuesta = 'q'
            if Respuesta == eval(corrAns):
                TRespCorr.append(Response.rt)
                timelastresp = Response.rt
                if condicion in condicionesA:
                    trainCorrRespA = trainCorrRespA + 1
                if condicion in condicionesB:
                    trainCorrRespB = trainCorrRespB + 1
            if Respuesta != eval(corrAns):
                TRespIncorr.append(Response.rt)
                if condicion in condicionesA:
                    trainIncorrRespA = trainIncorrRespA + 1
                if condicion in condicionesB:
                    trainIncorrRespB = trainIncorrRespB + 1
            if condicion == "C0": trainRespC += 1

        if castigo == 1:
            if Respuesta == eval(corrAns):
                if duracionpre <= timelastresp and timelastresp <= duracionpre + 1:
                    if condicion in ['A1', 'B2']:
                        volumen = 0
                        castigo = 0

        Response.keys = None
        Respose.rt = None
        Respuesta = ""
      End Routine:
        if condicion in condicionesA:
            thisExp.addData('CorrResponseFreq', trainCorrRespA)
            thisExp.addData('IncorrResponseFreq', trainIncorrRespA)

        if condicion in condicionesB:
            thisExp.addData('CorrResponseFreq', trainCorrRespB)
            thisExp.addData('IncorrResponseFreq', trainIncorrRespB)

        if condicion == "C0":
            thisExp.addData('CorrResponseFreq', trainRespC)
            thisExp.addData('IncorrResponseFreq', trainRespC)

        thisExp.addData('RTimesCorr', TRespCorr)
        thisExp.addData('RTimesIncorr', TRespIncorr)
        thisExp.addData('duracionpre', duracionpre)
        thisExp.addData('castigo', castigo)

        #if premio == 1: cuentapremios += 0.2

        trainCorrRespA = 0
        trainCorrRespB = 0
        trainIncorrRespA = 0
        trainIncorrRespB = 0
        trainRespC = 0
        TRespCorr = []
        TRespIncorr = []
        duracionpre = 0

        if castigo == 1: saltarelieve = 1
    KeyboardComponent Response
      allowedKeys = 'p', 'P', 'q', 'Q'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 20
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    ImageComponent ED
      image [set every repeat] = $nested(Cue)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
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    SoundComponent US_Ref
      sound [set every repeat] = $nested(Reforzador)
      startVal [time (s)] = $duracionpre + 2
      stopVal [duration (s)] = 3.0
      volume [set every frame] = $volumen
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    StaticComponent ITI
      startVal [time (s)] = 21.0
      stopVal [duration (s)] = 2
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  Routine Reforzador
    ImageComponent Left_reinforcer
      image [set every repeat] = $reforzadorIzq
      opacity [set every frame] = $transpaleft
      pos = (-9, 0)
      size = (3.7, 3.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent Right_reinforcer
      image [set every repeat] = $reforzadorDer
      opacity [set every frame] = $transparight
      pos = (9, 0)
      size = (3.7, 3.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    CodeComponent code_3
      Code Type = Py
      Begin Routine:
        totalReward = str("{:3.2f}".format(cuentapremios))
      End Routine:
        transpaleft = 0
        transparight = 0
    TextComponent Acumulado3
      letterHeight = 0.8
      pos = (0, 7)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text [set every frame] = 'Ganancias acumuladas: ' + $totalReward + ' €'
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  Routine fix_EC
    TextComponent fijacion_2
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_4
      Code Type = Py
      Begin Routine:
        #Pav_trials.finished = True
        #continueRoutine = False
        #totalReward = str("{:3.2f}".format(cuentapremios))
        saltarelieve = 0

        if condicion == 'A1':
            azar = randint(0, len(duracionesA))
            duracionpre = duracionesA[azar]
            del duracionesA[azar]
            castigo = 1
            saltarelieve = 1

        if condicion == 'B2':
            azar = randint(0, len(duracionesB))
            duracionpre = duracionesB[azar]
            del duracionesB[azar]
            castigo = 1
            saltarelieve = 1

        #Pav_trials.finished = True
      Each Frame:
        #if Left_US.status == STARTED:
            #totalReward = str("{:3.2f}".format(cuentapremios))
      End Routine:
        thisExp.addData('duracionpre', duracionpre)
        thisExp.addData('castigo', castigo)

        castigo = 0
        duracionpre = 0
    ImageComponent EC
      image [set every repeat] = $nested(Cue)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
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    SoundComponent US_Pav
      sound [set every repeat] = $nested(Reforzador)
      startVal [time (s)] = $duracionpre + 1
      stopVal [duration (s)] = 3.0
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    StaticComponent ISI
      startVal [time (s)] = 21.0
      stopVal [duration (s)] = 2
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  Routine Test
    TextComponent fijacion_3
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_6
      Code Type = Py
      Begin Routine:
        #Test_trials.finished = True
        if Test_trials.thisRepN % 2 == 0:
            if sujeto % 4 + 1 < 3:
                condition = condicion1
            else:
                condition = condicion2
        else:
            if sujeto % 4 + 1 < 3:
                condition = condicion2
            else:
                condition = condicion1

        if condition in ['A-limit', 'B-limit', 'C-limit']:
            Indicator_Opacity = 1
        else:
            Indicator_Opacity = 0
      Each Frame:
        if len(ResponseTest.keys) > len(listaResp): NewResp = True
        listaResp = ResponseTest.keys
        listaTR = ResponseTest.rt

        if NewResp == True:
            if LeftResponses > 0:
                if listaResp[-1] in ['p', 'P']: Respuesta = 'p'
                if listaResp[-1] in ['q', 'Q']: Respuesta = 'q'
                if Respuesta == eval(corrAns):
                    TRespCorr.append(listaTR[-1])
                    if condition in ['A-limit', 'A-nolimit']:
                        testCorrRespA += 1
                    if condition in ['B-limit', 'B-nolimit']:
                        testCorrRespB += 1
                if Respuesta != eval(corrAns):
                    TRespIncorr.append(listaTR[-1])
                    if condition in ['A-limit', 'A-nolimit']:
                        testIncorrRespA += 1
                    if condition in ['B-limit', 'B-nolimit']:
                        testIncorrRespB += 1
                if condition in ['C-limit', 'C-nolimit']: testRespC += 1
                if Respuesta in ['p', 'q'] and condition in ['A-limit', 'B-limit', 'C-limit']:
                    Indicator_Size[0] -= 1
                    Indicator_Position[0] -= 0.5
                    LeftResponses -= 1
            else:
                runout_position = [0, 5]
                if listaResp[-1] in ['p', 'P', 'q', 'Q']: OutResponse += 1

        NewResp = False
        Respuesta = ''
      End Routine:
        thisExp.addData('Condition', condition)

        if condition in ['A-limit', 'A-nolimit']:
            thisExp.addData('CorrTestResponseFreq', testCorrRespA)
            thisExp.addData('IncorrTestResponseFreq', testIncorrRespA)

        if condition in ['B-limit', 'B-nolimit']:
            thisExp.addData('CorrTestResponseFreq', testCorrRespB)
            thisExp.addData('IncorrTestResponseFreq', testIncorrRespB)

        if condition in ['C-limit', 'C-nolimit']:
            thisExp.addData('CorrTestResponseFreq', testRespC)
            thisExp.addData('IncorrTestResponseFreq', testRespC)

        thisExp.addData('OutLimitResp', OutResponse)

        thisExp.addData('RTimesTestCorr', TRespCorr)
        thisExp.addData('RTimesTestIncorr', TRespIncorr)

        testCorrRespA = 0
        testCorrRespB = 0
        testIncorrRespA = 0
        testIncorrRespB = 0
        testRespC = 0
        TRespCorr = []
        TRespIncorr = []
        LeftResponses = 20
        Indicator_Size[0] = 20
        Indicator_Position[0] = 0
        runout_position = [100, 5]
        OutResponse = 0
    KeyboardComponent ResponseTest
      allowedKeys = 'p', 'P', 'q', 'Q'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 20
      store = all keys
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    ImageComponent ED_Test
      image [set every repeat] = $nested(Cue)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
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    StaticComponent ITI_2
      startVal [time (s)] = 21.0
      stopVal [duration (s)] = 2
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    ImageComponent Indicador
      image = IndicaResp.jpg
      opacity [set every repeat] = $Indicator_Opacity
      pos [set every frame] = $Indicator_Position
      size [set every frame] = $Indicator_Size
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
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    TextComponent Indicador_Numerico
      letterHeight = 1
      opacity [set every repeat] = $Indicator_Opacity
      pos = (0, -7)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
      text [set every frame] = $LeftResponses
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    TextboxComponent RunOutMessage
      bold = False
      borderWidth = 1
      color = red
      editable = False
      letterHeight = 1
      pos [set every frame] = $runout_position
      size = [20, 5]
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
      text = ¡EXCEDISTE EL LÍMITE DE RESPUESTA!
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  Routine Pav_LeftCont_Ratings
    RatingScaleComponent PavLeftCont_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 1.0
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      customize_everything:
        low=0,
        high=9,
        marker='triangle',
        scale="0=Muy seguro/a de que NO aparecerá por ese oído,   9=Muy seguro/a de que SÍ aparecerá por ese oído",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.6),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    CodeComponent code_7
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if condicion == 'A0':
            if eval(corrAns) == 'q':
                juiPavA1 = PavLeftCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiPavA2 = PavLeftCont_Scale.getRating()

        if condicion == 'B0':
            if eval(corrAns) == 'q':
                juiPavB2 = PavLeftCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiPavB1 = PavLeftCont_Scale.getRating()

        if condicion == 'C0':
            if sujeto/2 == int(sujeto/2):
                juiPavC1 = PavLeftCont_Scale.getRating()
            else:
                juiPavC2 = PavLeftCont_Scale.getRating()
    TextComponent text_5
      letterHeight = 0.8
      pos = (0, 9)
      startVal [time (s)] = 1.0
      text = ¿En qué medida crees que esta imagen irá seguida por el sonido del oído izquierdo?
      wrapWidth = 35
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    TextComponent text_6
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 1.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    ImageComponent EC_left
      image [set every repeat] = $nested(Cue)
      pos = (0, 3)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
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  Routine Pav_RightCont_Ratings
    RatingScaleComponent PavRightCont_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 1.0
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      customize_everything:
        low=0,
        high=9,
        marker='triangle',
        scale="0=Muy seguro/a de que NO aparecerá en ese lugar,   9=Muy seguro/a de que SÍ aparecerá en ese lugar",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.6),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    CodeComponent code_8
      Code Type = Py
      End Routine:
        if condicion == 'A0':
            if eval(corrAns) == 'q':
                juiPavA2 = PavRightCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiPavA1 = PavRightCont_Scale.getRating()

        if condicion == 'B0':
            if eval(corrAns) == 'q':
                juiPavB1 = PavRightCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiPavB2 = PavRightCont_Scale.getRating()

        if condicion == 'C0':
            if sujeto/2 == int(sujeto/2):
                juiPavC2 = PavRightCont_Scale.getRating()
            else:
                juiPavC1 = PavRightCont_Scale.getRating()

        if PavRating_trials.thisN == 2:
            thisExp.addData('juiPavA1', juiPavA1)
            thisExp.addData('juiPavA2', juiPavA2)
            thisExp.addData('juiPavB1', juiPavB1)
            thisExp.addData('juiPavB2', juiPavB2)
            thisExp.addData('juiPavC1', juiPavC1)
            thisExp.addData('juiPavC2', juiPavC2)
    TextComponent text_7
      letterHeight = 0.8
      pos = (0, 9)
      startVal [time (s)] = 1.0
      text = ¿En qué medida crees que esta imagen irá seguida por el sonido del oído derecho?
      wrapWidth = 35
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    TextComponent text_8
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 1.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    ImageComponent EC_right
      image [set every repeat] = $nested(Cue)
      pos = (0, 3)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
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  Routine Instr_LeftCont_Ratings
    RatingScaleComponent InstrLeftCont_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 1.0
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      customize_everything:
        low=0,
        high=9,
        marker='triangle',
        scale="0=Muy seguro/a de que NO aparecerá por ese oído,   9=Muy seguro/a de que SÍ aparecerá por ese oído",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.6),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    CodeComponent code_9
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if condicion == 'A0':
            if eval(corrAns) == 'q':
                juiInstrA1 = InstrLeftCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiInstrA2 = InstrLeftCont_Scale.getRating()

        if condicion == 'B0':
            if eval(corrAns) == 'q':
                juiInstrB2 = InstrLeftCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiInstrB1 = InstrLeftCont_Scale.getRating()

        if condicion == 'C0':
            if sujeto/2 == int(sujeto/2):
                juiInstrC1 = InstrLeftCont_Scale.getRating()
            else:
                juiInstrC2 = InstrLeftCont_Scale.getRating()
    TextComponent text_9
      letterHeight = 0.8
      pos = (0, 9)
      startVal [time (s)] = 1.0
      text = ¿En qué medida crees que esta imagen irá seguida por el sonido del oído izquierdo si no pulsas la tecla correcta?
      wrapWidth = 35
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    TextComponent text_10
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 1.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    ImageComponent ED_left
      image [set every repeat] = $nested(Cue)
      pos = (0, 3)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
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  Routine Instr_RightCont_Ratings
    RatingScaleComponent InstrRightCont_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 1.0
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      customize_everything:
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    CodeComponent code_10
      Code Type = Py
      End Routine:
        if condicion == 'A0':
            if eval(corrAns) == 'q':
                juiInstrA2 = InstrRightCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiInstrA1 = InstrRightCont_Scale.getRating()

        if condicion == 'B0':
            if eval(corrAns) == 'q':
                juiInstrB1 = InstrRightCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiInstrB2 = InstrRightCont_Scale.getRating()

        if condicion == 'C0':
            if sujeto/2 == int(sujeto/2):
                juiInstrC2 = InstrRightCont_Scale.getRating()
            else:
                juiInstrC1 = InstrRightCont_Scale.getRating()

        if Instr_Cont_trials.thisTrialN == 2:
            thisExp.addData('juiInstrA1', juiInstrA1)
            thisExp.addData('juiInstrA2', juiInstrA2)
            thisExp.addData('juiInstrB1', juiInstrB1)
            thisExp.addData('juiInstrB2', juiInstrB2)
            thisExp.addData('juiInstrC1', juiInstrC1)
            thisExp.addData('juiInstrC2', juiInstrC2)
    TextComponent text_11
      letterHeight = 0.8
      pos = (0, 9)
      startVal [time (s)] = 1.0
      text = ¿En qué medida crees que esta imagen irá seguida por el sonido del oído derecho si no pulsas la tecla correcta?
      wrapWidth = 35
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    TextComponent text_12
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 1.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    ImageComponent ED_right
      image [set every repeat] = $nested(Cue)
      pos = (0, 3)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
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  Routine Despedida
    TextComponent text_19
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Has finalizado la tarea. Muchas gracias por tu participación. Por favor, no pulses ninguna tecla y no te levantes hasta que te lo indique el personal del laboratorio.
      wrapWidth = 35
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    KeyboardComponent key_resp_3
      allowedKeys = 'f', 'F'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine Test_LeftCont_Ratings
    RatingScaleComponent TestLeftCont_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 1.0
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      customize_everything:
        low=0,
        high=9,
        marker='triangle',
        scale="0=Muy seguro/a de que NO aparecerá en ese lugar,   9=Muy seguro/a de que SÍ aparecerá en ese lugar",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.6),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if condicion == 'A0':
            if eval(corrAns) == 'q':
                juiTestA1 = TestLeftCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiTestA2 = TestLeftCont_Scale.getRating()

        if condicion == 'B0':
            if eval(corrAns) == 'q':
                juiTestB2 = TestLeftCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiTestB1 = TestLeftCont_Scale.getRating()

        if condicion == 'C0':
            if sujeto/2 == int(sujeto/2):
                juiTestC1 = TestLeftCont_Scale.getRating()
            else:
                juiTestC2 = TestLeftCont_Scale.getRating()
    TextComponent text_21
      letterHeight = 0.8
      pos = (0, 9)
      startVal [time (s)] = 1.0
      text = ¿En qué medida crees que esta imagen irá seguida por el sonido del oído izquierdo si no pulsas la tecla correcta?
      wrapWidth = 35
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    TextComponent text_22
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 1.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    ImageComponent ED_left_Test
      image [set every repeat] = $nested(Cue)
      pos = (0, 3)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
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  Routine Test_RightCont_Ratings
    RatingScaleComponent TestRightCont_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 1.0
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      customize_everything:
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    CodeComponent code_15
      Code Type = Py
      End Routine:
        if condicion == 'A0':
            if eval(corrAns) == 'q':
                juiTestA2 = TestRightCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiTestA1 = TestRightCont_Scale.getRating()

        if condicion == 'B0':
            if eval(corrAns) == 'q':
                juiTestB1 = TestRightCont_Scale.getRating()
            elif eval(corrAns) == 'p':
                juiTestB2 = TestRightCont_Scale.getRating()

        if condicion == 'C0':
            if sujeto/2 == int(sujeto/2):
                juiTestC2 = TestRightCont_Scale.getRating()
            else:
                juiTestC1 = TestRightCont_Scale.getRating()

        if Test_Cont_trials.thisTrialN == 2:
            thisExp.addData('juiTestA1', juiTestA1)
            thisExp.addData('juiTestA2', juiTestA2)
            thisExp.addData('juiTestB1', juiTestB1)
            thisExp.addData('juiTestB2', juiTestB2)
            thisExp.addData('juiTestC1', juiTestC1)
            thisExp.addData('juiTestC2', juiTestC2)
    TextComponent text_23
      letterHeight = 0.8
      pos = (0, 9)
      startVal [time (s)] = 1.0
      text = ¿En qué medida crees que esta imagen irá seguida por el sonido del oído derecho si no pulsas la tecla correcta?
      wrapWidth = 35
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    TextComponent text_24
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 1.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    ImageComponent ED_right_Test
      image [set every repeat] = $nested(Cue)
      pos = (0, 3)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
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  Routine Prueba_Dev
    RatingScaleComponent Dev_Test_Rating_Scale
      forceEndRoutine = True
      markerStart = 50
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 0.0
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      customize_everything:
        low=0,
        high=100,
        marker='triangle',
        scale="",
        markerStart=5,
        labels=("0", "100"),
        size=1.2,
        pos=(0, -0.4),
        textSize=0.6,
        showValue=False,
        showAccept=True,
        acceptPreText='Aceptar',
        acceptText='Aceptar',
        disappear=False
    CodeComponent code_17
      Code Type = Py
      Each Frame:
        takeRightDiam = Dev_Test_Rating_Scale.getRating()
        takeLeftDiam = 100 - takeRightDiam
        ScoreLeft = str(takeLeftDiam)
        ScoreRight = str(takeRightDiam)
      End Routine:
        if sujeto % 2 == 0:
            RatingCheckNondev = Dev_Test_Rating_Scale.getRating()
            RatingCheckDev = 100 - RatingCheckNondev
        else:
            RatingCheckDev = Dev_Test_Rating_Scale.getRating()
            RatingCheckNondev = 100 - RatingCheckDev

        thisExp.addData('RatingCheckNondev', RatingCheckNondev)
        thisExp.addData('RatingCheckDev', RatingCheckDev)
    ImageComponent Left_Sound_Image
      image [set every repeat] = $reforzadorIzq
      opacity [set every frame] = 1
      pos = (-9, 0)
      size = (3.7, 3.5)
      startVal [time (s)] = 0
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    ImageComponent Right_Sound_Image
      image [set every repeat] = $reforzadorDer
      opacity [set every frame] = 1
      pos = (9, 0)
      size = (3.7, 3.5)
      startVal [time (s)] = 0
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    TextComponent Left_Score
      letterHeight = 0.8
      pos = (-9, -3)
      startVal [time (s)] = 0.0
      text [set every frame] = $ScoreLeft
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    TextComponent Right_Score
      letterHeight = 0.8
      pos = (9, -3)
      startVal [time (s)] = 0.0
      text [set every frame] = $ScoreRight
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    TextComponent text_25
      letterHeight = 0.8
      pos = (0, 6)
      startVal [time (s)] = 0.0
      text = Imagina que tuvieras que recibir 100 sonidos más, pero teniendo la posibilidad de elegir cuántos de esos sonidos serían el del oído izquierdo y cuántos serían el del derecho. Sitúa el marcador triangular de la escala en función de cuántos sonidos eligirías de un oído y del otro.
      wrapWidth = 35
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  Routine Instr_Pav
    TextComponent InstrPav_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        En esta parte de la tarea se sucederán presentaciones de imágenes en la pantalla a las que tendrás que prestar atención. Durante la presentación de una de esas imágenes es probable que oigas un sonido muy desagradable por tu oído izquierdo, mientras que la presentación de otra de esas imágenes predice la aparición del mismo sonido por el oído derecho con una cierta probabilidad.

        Es importante que aprendas la relación entre las imágenes y el oído por el que se presentará el sonido porque en la siguiente fase de la tarea necesitarás esta información para evitarlo. Como comprobarás, el sonido desagradable no aparece siempre. Por eso, en las ocasiones en que no se presente, se te pedirá que valores el grado de alivio en el momento en que la imagen desaparezca y compruebes que, efectivamente, te has librado del sonido.

        Pulsa la BARRA ESPACIADORA si estás preparado/a para comenzar con esta primera fase.
    KeyboardComponent avanza_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instr_JuiPav
    TextComponent InstrJuiPav_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        Antes de pasar a la siguiente fase, te vamos a pedir que realices una serie de estimaciones.

        Pulsa la BARRA ESPACIADORA si estás preparado/a para avanzar.
    KeyboardComponent avanza_key_resp2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine InstrRef1
    CodeComponent code_5
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
        duracionesA = [4, 6, 8, 10, 12, 14, 16]
        duracionesB = [4, 6, 8, 10, 12, 14, 16]
    TextComponent InstrRef1_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        A continuación vas a iniciar una fase muy similar a la anterior. Te habrás dado cuenta de que, en la fase anterior, el sonido tardaba unas veces más y otras veces menos en presentarse desde la aparición de la imagen en pantalla. En la fase que vas a comenzar ahora ocurre lo mismo. Pero ahora podrás evitar el sonido pulsando la tecla correcta: la 'P' (situada a la derecha del teclado), para inhibir el sonido por el oído derecho, y la 'Q' (situada a la izquierda del teclado), para inhibir el sonido por el oído izquierdo.

        El problema es que el efecto inhibitorio de la pulsación de las teclas sobre el sonido dura solo un segundo. Una vez transcurrido ese tiempo, tendrás que pulsar otra vez si quieres asegurar la evitación del sonido. Esto quiere decir que si tu ritmo de pulsación es igual o superior a una vez por segundo (todo lo rápido que quieras), te aseguras de que vas a inhibir el sonido. Por el contrario, si tu ritmo es inferior a una respuesta por segundo, te arriesgas a sufrir el sonido desagradable. Puedes pulsar las teclas TODAS LAS VECES Y AL RITMO QUE QUIERAS mientras la imagen esté en pantalla.  Sin embargo, NUNCA DEBES MANTENER LA TECLA PRESIONADA; debes levantar en seguida el dedo tras cada pulsación.

        Pulsa la BARRA ESPACIADORA si estás preparado/a para avanzar.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstrRef2
    CodeComponent code_18
      Code Type = Py
      End Routine:
        if key_resp_6.keys == 'space': InstrRef_trials.finished = True
    TextComponent InstrRef2_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        Si tienes éxito, alguna de las respuestas hará que no se presente el sonido desagradable.

        Si estás preparado/a, localiza las teclas de respueta Q y P, y pulsa la BARRA ESPACIADORA para comenzar. También puedes pulsar la R para retroceder.
    KeyboardComponent key_resp_6
      allowedKeys = 'r','R','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_JuiRef
    TextComponent InstrJuiRef_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        Al igual que antes, te vamos a pedir que realices una serie de estimaciones antes de pasar a la siguiente fase.

        Pulsa la BARRA ESPACIADORA si estás preparado/a para avanzar.
    KeyboardComponent avanza_key_resp2_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = Py
      Begin Routine:
        thisExp.addData('TotalReward', totalReward)
  Routine Instr_JuiTest
    TextComponent InstrRatingConfi_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        De nuevo, tendrás que realizar una serie de estimaciones antes de pasar a la siguiente fase. Lee bien lo que se te pide porque se trata de nuevas valoraciones que no has realizado con anterioridad.

        Pulsa la BARRA ESPACIADORA si estás preparado/a para avanzar.
    KeyboardComponent avanza_key_resp2_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine InstrRecall
    TextComponent text_3
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      text = 'Pulsa la barra espaciadora para recordar cómo es el sonido que has estado recibiendo'
      wrapWidth = 30
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RecallRating
    RatingScaleComponent RecallRating_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 3.0
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      customize_everything:
        low=0,
        high=9,
        marker='triangle',
        scale="0=Nada de desagradable                                   9=Extremadamente desagradable",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.6),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    CodeComponent code_20
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        AverJuiRecall = RecallRating_Scale.getRating()

        thisExp.addData('AverJuiRecall', AverJuiRecall)
    TextComponent text_13
      letterHeight = 0.8
      pos = (0, 2)
      startVal [time (s)] = 3.0
      text = ¿En qué medida te ha resultado desagradable este sonido?
      wrapWidth = 35
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    TextComponent text_14
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 3.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    SoundComponent sound_3
      sound [set every repeat] = $Ref2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine InstrDeval
    TextComponent text_4
      letterHeight = 0.8
      startVal [time (s)] = 0.0
      text = 'IMPORTANTE: a partir de ahora, y HASTA QUE TERMINE POR COMPLETO TU PARTICIPACIÓN, el sonido que se presentará por tu oído ' + $DevalMsg + ' sonará del siguiente modo:'
      wrapWidth = 30
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    CodeComponent code_21
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_20
      letterHeight = 0.8
      pos = (0, -3)
      startVal [time (s)] = 0.0
      text = Pulsa la barra espaciadora para escuchar el sonido.
      wrapWidth = 30
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  Routine DevalRating
    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        AverJuiDeval = DevalRating_Scale.getRating()

        thisExp.addData('AverJuiDeval', AverJuiDeval)
    RatingScaleComponent DevalRating_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 3.0
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      customize_everything:
        low=0,
        high=9,
        marker='triangle',
        scale="0=Nada de desagradable                                   9=Extremadamente desagradable",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.6),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    TextComponent text_15
      letterHeight = 0.8
      pos = (0, 2)
      startVal [time (s)] = 3.0
      text = ¿En qué medida te ha resultado desagradable este sonido?
      wrapWidth = 35
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    TextComponent text_16
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 3.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    SoundComponent sound_2
      sound [set every repeat] = $Ref1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      volume = 0.01
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  Routine RateRelieve_Pav
    RatingScaleComponent RelieveRating_Pav
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 0
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      customize_everything:
        low=0,
        high=100,
        marker='triangle',markerStart=0,
        scale="0=Nada de alivio                                  50=Algo de alivio                            100=Mucho alivio",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.1),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        if saltarelieve == 1:
            continueRoutine = False
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
        if condicion == 'A0':
            RelievePavA = RelieveRating_Pav.getRating()

        if condicion == 'B0':
            RelievePavB = RelieveRating_Pav.getRating()

        if condicion == 'C0':
            RelievePavC.append(RelieveRating_Pav.getRating())

        if Pav_trials.thisTrialN == 5:
            thisExp.addData('RelievePavA', RelievePavA)
            thisExp.addData('RelievePavB', RelievePavB)
            thisExp.addData('RelievePavC_1', RelievePavC[0])
            thisExp.addData('RelievePavC_2', RelievePavC[1])
            RelievePavC = []
    TextComponent text_17
      letterHeight = 0.8
      pos = (0, 4)
      startVal [time (s)] = 0
      text = ¿Cuánto alivio has sentido al desaparecer la imagen?
      wrapWidth = 35
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    TextComponent text_18
      letterHeight = 0.7
      pos = (0, -8)
      startVal [time (s)] = 0
      text = Mueve el marcador triangular con el ratón hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 20
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    ImageComponent Barra_relieve
      image = barrarelieve.jpg
      pos = (0, -2)
      size = (20.4, 0.5)
      startVal [time (s)] = 0.0
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  Routine RateRelieve_Instr
    RatingScaleComponent RelieveRating_Instr
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 0
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      customize_everything:
        low=0,
        high=100,
        marker='triangle',markerStart=0,
        scale="0=Nada de alivio                                  50=Algo de alivio                            100=Mucho alivio",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.1),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    CodeComponent code_23
      Code Type = Py
      Begin Routine:
        if saltarelieve == 1:
            continueRoutine = False
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False

        if saltarelieve == 0:
            if condicion == 'A0':
                RelieveInstrA0 = RelieveRating_Instr.getRating()

            if condicion == 'A1':
                RelieveInstrA1 = RelieveRating_Instr.getRating()

            if condicion == 'B0':
                RelieveInstrB0 = RelieveRating_Instr.getRating()

            if condicion == 'B2':
                RelieveInstrB2 = RelieveRating_Instr.getRating()

            if condicion == 'C0':
                RelieveInstrC.append(RelieveRating_Instr.getRating())

        if Reinforcement_trials.thisTrialN == 5:
            thisExp.addData('RelieveInstrA0', RelieveInstrA0)
            thisExp.addData('RelieveInstrA1', RelieveInstrA1)
            thisExp.addData('RelieveInstrB0', RelieveInstrB0)
            thisExp.addData('RelieveInstrB2', RelieveInstrB2)
            thisExp.addData('RelieveInstrC_1', RelieveInstrC[0])
            thisExp.addData('RelieveInstrC_2', RelieveInstrC[1])
            RelieveInstrA0 = RelieveInstrA1 = RelieveInstrB0 = RelieveInstrB2 = ''
            RelieveInstrC = []
    TextComponent text_26
      letterHeight = 0.8
      pos = (0, 4)
      startVal [time (s)] = 0
      text = ¿Cuánto alivio has sentido al desaparecer la imagen?
      wrapWidth = 35
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    TextComponent text_27
      letterHeight = 0.7
      pos = (0, -8)
      startVal [time (s)] = 0
      text = Mueve el marcador triangular con el ratón hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 20
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    ImageComponent Barra_relieve_2
      image = barrarelieve.jpg
      pos = (0, -2)
      size = (20.4, 0.5)
      startVal [time (s)] = 0.0
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  Routine Avoid_trial
    TextComponent fixation
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent Signal
      image [set every repeat] = $nested(Cue)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
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    KeyboardComponent Keypress
      allowedKeys = 'p', 'P', 'q', 'Q'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 20
      store = all keys
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    SoundComponent US_Sound
      sound [set every repeat] = $nested(Reforzador)
      startVal [time (s)] = $duracionpre + 1
      stopVal [duration (s)] = 3.0
      volume [set every frame] = $volumen
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    CodeComponent code_24
      Code Type = Py
      Begin Routine:
        saltarelieve = 0
        #Reinforcement_trials.finished = True
        #continueRoutine = False
        if condicion == 'A1':
            azar = randint(0, len(duracionesA))
            duracionpre = duracionesA[azar]
            del duracionesA[azar]
            castigo = volumen = 1

        if condicion == 'B2':
            azar = randint(0, len(duracionesB))
            duracionpre = duracionesB[azar]
            del duracionesB[azar]
            castigo = volumen = 1

        if condicion in ['A0', 'B0', 'C0']:
            castigo = volumen = 0

        #totalReward = str("{:3.2f}".format(cuentapremios))
      Each Frame:
        if len(Keypress.keys) > len(listaResp): NewResp = True
        listaResp = Keypress.keys
        listaTR = Keypress.rt

        if NewResp == True:
            if listaResp[-1] in validResponses:
                if listaResp[-1] in ['p', 'P']: Respuesta = 'p'
                if listaResp[-1] in ['q', 'Q']: Respuesta = 'q'
                if Respuesta == eval(corrAns):
                    TRespCorr.append(listaTR[-1])
                    timelastresp = listaTR[-1]
                    if condicion in condicionesA:
                        trainCorrRespA += 1
                    if condicion in condicionesB:
                        trainCorrRespB += 1
                if Respuesta != eval(corrAns):
                    TRespIncorr.append(listaTR[-1])
                    if condicion in condicionesA:
                        trainIncorrRespA += 1
                    if condicion in condicionesB:
                        trainIncorrRespB += 1
                if condicion == "C0": trainRespC += 1

        if castigo == 1:
            if Respuesta == eval(corrAns):
                if duracionpre - 1 <= timelastresp and timelastresp <= duracionpre:
                    castigo = 0
                    volumen = 0

        NewResp = False
        Respuesta = ''
      End Routine:
        if condicion in condicionesA:
            thisExp.addData('CorrResponseFreq', trainCorrRespA)
            thisExp.addData('IncorrResponseFreq', trainIncorrRespA)

        if condicion in condicionesB:
            thisExp.addData('CorrResponseFreq', trainCorrRespB)
            thisExp.addData('IncorrResponseFreq', trainIncorrRespB)

        if condicion == 'C0':
            thisExp.addData('CorrResponseFreq', trainRespC)
            thisExp.addData('IncorrResponseFreq', trainRespC)

        thisExp.addData('RTimesCorr', TRespCorr)
        thisExp.addData('RTimesIncorr', TRespIncorr)
        thisExp.addData('duracionpre', duracionpre)
        thisExp.addData('castigo', castigo)

        #if premio == 1: cuentapremios += 0.2

        trainCorrRespA = 0
        trainCorrRespB = 0
        trainIncorrRespA = 0
        trainIncorrRespB = 0
        trainRespC = 0
        TRespCorr = []
        TRespIncorr = []
        listaResp = []
        listaTR = []
        duracionpre = 0

        if castigo == 1: saltarelieve = 1
        #if len(duracionesA) == 0: duracionesA = [4, 6, 8, 10, 12, 14, 16]
        #if len(duracionesB) == 0: duracionesB = [4, 6, 8, 10, 12, 14, 16]
    StaticComponent ISI_2
      startVal [time (s)] = 21.0
      stopVal [duration (s)] = 2
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  Routine Test2
    TextComponent fijacion_4
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent ED_Test2
      image [set every repeat] = $nested(Cue)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
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  Routine RateRelieve_Test
    RatingScaleComponent RelieveRating_Test
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 0
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      customize_everything:
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    CodeComponent code_25
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False

        if condition == 'A-limit':
            RelieveTestA_LM = RelieveRating_Test.getRating()

        if condition == 'A-nolimit':
            RelieveTestA_NLM = RelieveRating_Test.getRating()

        if condition == 'B-limit':
            RelieveTestB_LM = RelieveRating_Test.getRating()

        if condition == 'B-nolimit':
            RelieveTestB_NLM = RelieveRating_Test.getRating()

        if condition == 'C-limit':
            RelieveTestC_LM = RelieveRating_Test.getRating()

        if condition == 'C-nolimit':
            RelieveTestC_NLM = RelieveRating_Test.getRating()

        if (Test_trials.thisN + 1) % 6 == 0:
            thisExp.addData('RelieveTest_A-limit', RelieveTestA_LM)
            thisExp.addData('RelieveTest_A-nolimit', RelieveTestA_NLM)
            thisExp.addData('RelieveTest_B-limit', RelieveTestB_LM)
            thisExp.addData('RelieveTest_B-nolimit', RelieveTestB_NLM)
            thisExp.addData('RelieveTest_C-limit', RelieveTestC_LM)
            thisExp.addData('RelieveTest_C-nolimit', RelieveTestC_NLM)
            RelieveTestA_LM = RelieveTestA_NLM = RelieveTestB_LM = RelieveTestB_NLM = ''
            RelieveTestC_LM = RelieveTestC_NLM = ''
    TextComponent text_28
      letterHeight = 0.8
      pos = (0, 4)
      startVal [time (s)] = 0
      text = ¿Cuánto alivio has sentido al desaparecer la imagen?
      wrapWidth = 35
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    TextComponent text_29
      letterHeight = 0.7
      pos = (0, -8)
      startVal [time (s)] = 0
      text = Mueve el marcador triangular con el ratón hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 20
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    ImageComponent Barra_relieve_3
      image = barrarelieve.jpg
      pos = (0, -2)
      size = (20.4, 0.5)
      startVal [time (s)] = 0.0
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  Routine Instr_test1
    CodeComponent code_13
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
    TextComponent InstrTest_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        En la siguiente fase podrás presionar, de nuevo, las teclas P o Q mientras la imagen aparezca en pantalla para inhibir el sonido desagradable. Sin embargo, en algunas ocasiones tendrás un límite de 20 respuestas como máximo. Una vez alcanzado ese límite, las respuestas que efectúes en adelante no podrán inhibir el sonido. Estas ocasiones serán fácilmente reconocibles porque aparecerán debajo de la imagen un contador analógico y un contador digital indicando el límite de respuestas. Cada vez que efectúes una respuesta, verás cómo cambian los contadores. De ese modo, podrás saber en cada momento cuántas respuestas te quedan. En la siguiente pantalla verás un ejemplo. Pulsa la P o la Q para comprobar cómo cambian los contadores. Cuando termines, vuelve a pulsar la barra espaciadora.

        Pulsa la BARRA ESPACIADORA si estás preparado/a para avanzar.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_test2
    CodeComponent code_26
      Code Type = Py
      Each Frame:
        if len(ResponseEj.keys) > len(listaResp): NewResp = True
        listaResp = ResponseEj.keys

        if NewResp == True:
            if listaResp[-1] != 'space':
                if LeftResponses > 0:
                    Indicator_Size[0] -= 1
                    Indicator_Position[0] -= 0.5
                    LeftResponses -= 1
                else:
                    runout_position = [0, 5]
            else:
                listaResp = []
                runout_position = [100, 5]
                Indicator_Size[0] = 20
                Indicator_Position[0] = 0
                LeftResponses = 20
                NewResp = False
                continueRoutine = False

        NewResp = False
    KeyboardComponent ResponseEj
      allowedKeys = 'p', 'P', 'q', 'Q', 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
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    ImageComponent ED_Ej
      image = fractal_Ej.jpg
      size = (9.3, 6.1)
      startVal [time (s)] = 0
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    StaticComponent ITI_3
      startVal [time (s)] = 21.0
      stopVal [duration (s)] = 2
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    ImageComponent Indicador_Ej
      image = IndicaResp.jpg
      pos [set every frame] = $Indicator_Position
      size [set every frame] = $Indicator_Size
      startVal [time (s)] = 0
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    TextComponent Indicador_Numerico_Ej
      letterHeight = 1
      pos = (0, -7)
      startVal [time (s)] = 0
      text [set every frame] = $LeftResponses
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    TextboxComponent RunOutMessage_Ej
      bold = False
      borderWidth = 1
      color = red
      editable = False
      letterHeight = 1
      pos [set every frame] = $runout_position
      size = [20, 5]
      startVal [time (s)] = 0
      text = ¡EXCEDISTE EL LÍMITE DE RESPUESTA!
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    TextComponent InstrTest_text_2
      letterHeight = 0.8
      pos = (0, -9)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Pulsa la BARRA ESPACIADORA si estás preparado/a para avanzar.
      wrapWidth = 35
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  Routine Instr_test3
    CodeComponent code_27
      Code Type = Py
      End Routine:
        if key_resp_9.keys == 'space': InstrTest_trials.finished = True
    TextComponent InstrTest_text_3
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        Cuando aparezca la imagen en solitario sin los contadores significa que no hay límite de respuesta y, por tanto, podrás presionar la P o la Q tantas veces como quieras.

        Si estás preparado/a, localiza las teclas de respueta Q y P y pulsa la BARRA ESPACIADORA para comenzar. También puedes pulsar la R para retroceder.
    KeyboardComponent key_resp_9
      allowedKeys = 'r', 'R', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_ConfiRating1
    RatingScaleComponent TestConfi_RatingScale1
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 1.0
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      customize_everything:
        low=0,
        high=9,
        marker='triangle',
        scale="0=Ninguna confianza,                                                     9=Muchísima confianza",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.6),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    CodeComponent code_28
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True

        if sujeto % 2 == 1:
            LimitPresenceMsg = 'SIN'
        else:
            LimitPresenceMsg = 'CON'
      End Routine:
        if sujeto % 2 == 1:
            if condicion == 'A0':
                ConfiRatingSinA = TestConfi_RatingScale1.getRating()
            if condicion == 'B0':
                ConfiRatingSinB = TestConfi_RatingScale1.getRating()
        #    if condicion == 'C0':
        #        ConfiRatingSinC = TestConfi_RatingScale1.getRating()
        else:
            if condicion == 'A0':
                ConfiRatingConA = TestConfi_RatingScale1.getRating()
            if condicion == 'B0':
                ConfiRatingConB = TestConfi_RatingScale1.getRating()
        #    if condicion == 'C0':
        #        ConfiRatingConC = TestConfi_RatingScale1.getRating()
    TextComponent text_30
      letterHeight = 0.8
      pos = (0, 9)
      startVal [time (s)] = 1.0
      text [set every repeat] = '¿Cuánta confianza tenías en poder inhibir el sonido desagradable ante esta imagen ' + $LimitPresenceMsg + ' límite de respuesta?'
      wrapWidth = 35
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    TextComponent text_31
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 1.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    ImageComponent ED_TestRating1
      image [set every repeat] = $nested(Cue)
      pos = (0, 3)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
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  Routine Test_ConfiRating2
    RatingScaleComponent TestConfi_RatingScale2
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 1.0
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      customize_everything:
        low=0,
        high=9,
        marker='triangle',
        scale="0=Ninguna confianza,                                                     9=Muchísima confianza",
        labels=("0", "1", "2", "3", "4", "5", "6", "7", "8", "9"),
        size=1.2,
        pos=(0, -0.6),
        textSize=0.6,
        showValue=True,
        showAccept=True,
        acceptPreText='Continuar',
        disappear=True
    CodeComponent code_29
      Code Type = Py
      Begin Routine:
        if sujeto % 2 == 1:
            LimitPresenceMsg = 'CON'
        else:
            LimitPresenceMsg = 'SIN'
      End Routine:
        if sujeto % 2 == 1:
            if condicion == 'A0':
                ConfiRatingConA = TestConfi_RatingScale2.getRating()
            if condicion == 'B0':
                ConfiRatingConB = TestConfi_RatingScale2.getRating()
        #    if condicion == 'C0':
        #        ConfiRatingConC = TestConfi_RatingScale1.getRating()
        else:
            if condicion == 'A0':
                ConfiRatingSinA = TestConfi_RatingScale2.getRating()
            if condicion == 'B0':
                ConfiRatingSinB = TestConfi_RatingScale2.getRating()
        #    if condicion == 'C0':
        #        ConfiRatingSinC = TestConfi_RatingScale1.getRating()

        if Test_Cont_trials.thisTrialN == 1:
            thisExp.addData('ConfiTestRatingA_Sin', ConfiRatingSinA)
            thisExp.addData('ConfiTestRatingA_Con', ConfiRatingConA)
            thisExp.addData('ConfiTestRatingB_Sin', ConfiRatingSinB)
            thisExp.addData('ConfiTestRatingB_Con', ConfiRatingConB)
    TextComponent text_32
      letterHeight = 0.8
      pos = (0, 9)
      startVal [time (s)] = 1.0
      text [set every repeat] = '¿Cuánta confianza tenías en poder inhibir el sonido desagradable ante esta imagen ' + $LimitPresenceMsg + ' límite de respuesta?'
      wrapWidth = 35
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    TextComponent text_33
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 1.0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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    ImageComponent ED_TestRating2
      image [set every repeat] = $nested(Cue)
      pos = (0, 3)
      size = (9.3, 6.1)
      startVal [time (s)] = 1
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  Routine InstrAversiveness
    TextComponent InstrAverRating_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        Ya te falta poco para terminar. En la siguiente pantalla, volverás a ver una imagen durante 20 segundos. A los diez segundos oirás el sonido desagradable. Cuando la imagen desaparezca te pediremos una valoración.

        Pulsa la BARRA ESPACIADORA si estás preparado/a para avanzar.
    KeyboardComponent avanza_key_resp2_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_34
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine US_10Spresentation
    TextComponent fijacion_5
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_30
      Code Type = Py
    ImageComponent EC_10S
      image = fractal_Ej.jpg
      size = (9.3, 6.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
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    SoundComponent US_10S
      sound [set every repeat] = $Ref2
      startVal [time (s)] = 11
      stopVal [duration (s)] = 3.0
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    StaticComponent ISI_3
      startVal [time (s)] = 21.0
      stopVal [duration (s)] = 2
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  Routine AverRating
    RatingScaleComponent AverRating_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 0
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      customize_everything:
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    CodeComponent code_31
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        FinalAverRating = AverRating_Scale.getRating()

        thisExp.addData('Aversion Final', FinalAverRating)
    TextComponent text_34
      letterHeight = 0.8
      pos = (0, 2)
      startVal [time (s)] = 0
      text = ¿En qué medida te ha resultado desagradable este sonido?
      wrapWidth = 35
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    TextComponent text_35
      letterHeight = 0.7
      pos = (0, -3)
      startVal [time (s)] = 0
      text = Clica sobre la escala y mueve el marcador triangular hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 35
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  Routine InstrRelieve
    TextComponent InstrRelieveRating_text
      letterHeight = 0.8
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 35
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      text:
        Solo te vamos a pedir una última cosa. En la siguiente pantalla, nuevamente, aparecerá la imagen durante 20 segundos y oirás el sonido a los 19 segundos. En cuanto desaparezca la imagen te volveremos a pedir una última valoración.

        Pulsa la BARRA ESPACIADORA si estás preparado/a para avanzar.
    KeyboardComponent avanza_key_resp2_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_35
      Code Type = Py
      Begin Routine:
        win.mouseVisible = False
  Routine EC_NoUS
    TextComponent fijacion_6
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent EC_sinEI
      image = fractal_Ej.jpg
      size = (9.3, 6.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 20
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    StaticComponent ISI_4
      startVal [time (s)] = 21.0
      stopVal [duration (s)] = 2
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  Routine FinalRelieveRating
    RatingScaleComponent FinalRelieveRating_Scale
      forceEndRoutine = True
      pos = (0, -10)
      size = 1.0
      startVal [time (s)] = 0
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      customize_everything:
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    CodeComponent code_33
      Code Type = Py
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False
        FinalRelieve = FinalRelieveRating_Scale.getRating()

        thisExp.addData('RelieveForSureUS', FinalRelieve)
    TextComponent text_36
      letterHeight = 0.8
      pos = (0, 4)
      startVal [time (s)] = 0
      text = ¿Cuánto alivio has sentido al desaparecer la imagen?
      wrapWidth = 35
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    TextComponent text_37
      letterHeight = 0.7
      pos = (0, -8)
      startVal [time (s)] = 0
      text = Mueve el marcador triangular con el ratón hasta la posición deseada. Después, clica sobre el número que aparece debajo de la escala.
      wrapWidth = 20
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    ImageComponent Barra_relieve_4
      image = barrarelieve.jpg
      pos = (0, -2)
      size = (20.4, 0.5)
      startVal [time (s)] = 0.0
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Flow
  Routine comienzo
  LoopInitiator Contrabalanceo loopType="TrialHandler"
    Selected rows = $counterbalance_row
    conditionsFile = Counterbalance.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('CueA', 'fractal1.jpg'), ('CueB', 'fractal2.jpg'), ('CueC', 'fractal3.jpg'), ('Ref1', 'Blue_dia.jpg'), ('Ref2', 'Yellow_dia.jpg'), ('PosRef1', 'derecha'), ('PosRef2', 'izquierda'), ('Resp1', 'k'), ('Resp2', 's')]),
      OrderedDict([('CueA', 'fractal1.jpg'), ('CueB', 'fractal2.jpg'), ('CueC', 'fractal3.jpg'), ('Ref1', 'Blue_dia.jpg'), ('Ref2', 'Yellow_dia.jpg'), ('PosRef1', 'izquierda'), ('PosRef2', 'derecha'), ('Resp1', 's'), ('Resp2', 'k')]),
      OrderedDict([('CueA', 'fractal2.jpg'), ('CueB', 'fractal3.jpg'), ('CueC', 'fractal1.jpg'), ('Ref1', 'Blue_dia.jpg'), ('Ref2', 'Yellow_dia.jpg'), ('PosRef1', 'derecha'), ('PosRef2', 'izquierda'), ('Resp1', 'k'), ('Resp2', 's')]),
      OrderedDict([('CueA', 'fractal2.jpg'), ('CueB', 'fractal3.jpg'), ('CueC', 'fractal1.jpg'), ('Ref1', 'Blue_dia.jpg'), ('Ref2', 'Yellow_dia.jpg'), ('PosRef1', 'izquierda'), ('PosRef2', 'derecha'), ('Resp1', 's'), ('Resp2', 'k')]),
      OrderedDict([('CueA', 'fractal3.jpg'), ('CueB', 'fractal1.jpg'), ('CueC', 'fractal2.jpg'), ('Ref1', 'Blue_dia.jpg'), ('Ref2', 'Yellow_dia.jpg'), ('PosRef1', 'derecha'), ('PosRef2', 'izquierda'), ('Resp1', 'k'), ('Resp2', 's')]),
      OrderedDict([('CueA', 'fractal3.jpg'), ('CueB', 'fractal1.jpg'), ('CueC', 'fractal2.jpg'), ('Ref1', 'Blue_dia.jpg'), ('Ref2', 'Yellow_dia.jpg'), ('PosRef1', 'izquierda'), ('PosRef2', 'derecha'), ('Resp1', 's'), ('Resp2', 'k')])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
    Routine Instr_Pav
    LoopInitiator Pav_trials loopType="TrialHandler"
      conditionsFile = Trialtypes.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('condicion', 'A1'), ('Cue', 'CueA'), ('Reforzador', 'Ref1'), ('corrAns', 'Resp1')]),
        OrderedDict([('condicion', 'A0'), ('Cue', 'CueA'), ('Reforzador', None), ('corrAns', 'Resp1')]),
        OrderedDict([('condicion', 'B1'), ('Cue', 'CueB'), ('Reforzador', 'Ref2'), ('corrAns', 'Resp2')]),
        OrderedDict([('condicion', 'B0'), ('Cue', 'CueB'), ('Reforzador', None), ('corrAns', 'Resp2')])]
      Routine fix_EC
      Routine RateRelieve_Pav
    LoopTerminator Pav_trials
    Routine Instr_JuiPav
    LoopInitiator PavRating_trials loopType="TrialHandler"
      conditionsFile = Ratingtypes.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Cue', 'CueA')]),
        OrderedDict([('Cue', 'CueB')]),
        OrderedDict([('Cue', 'CueC')])]
      Routine Pav_LeftCont_Ratings
      Routine Pav_RightCont_Ratings
    LoopTerminator PavRating_trials
    LoopInitiator InstrRef_trials loopType="TrialHandler"
      loopType = random
      nReps = 50
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      Routine InstrRef1
      Routine InstrRef2
    LoopTerminator InstrRef_trials
    LoopInitiator Reinforcement_trials loopType="TrialHandler"
      conditionsFile = Trialtypes.xlsx
      loopType = random
      nReps = 6
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      conditions:
        [OrderedDict([('condicion', 'A1'), ('Cue', 'CueA'), ('Reforzador', 'Ref1'), ('corrAns', 'Resp1')]),
        OrderedDict([('condicion', 'A0'), ('Cue', 'CueA'), ('Reforzador', 'Ref0'), ('corrAns', 'Resp1')]),
        OrderedDict([('condicion', 'B2'), ('Cue', 'CueB'), ('Reforzador', 'Ref2'), ('corrAns', 'Resp2')]),
        OrderedDict([('condicion', 'B0'), ('Cue', 'CueB'), ('Reforzador', 'Ref0'), ('corrAns', 'Resp2')]),
        OrderedDict([('condicion', 'C0'), ('Cue', 'CueC'), ('Reforzador', 'Ref0'), ('corrAns', 'RespC')]),
        OrderedDict([('condicion', 'C0'), ('Cue', 'CueC'), ('Reforzador', 'Ref0'), ('corrAns', 'RespC')])]
      Routine Avoid_trial
      Routine RateRelieve_Instr
    LoopTerminator Reinforcement_trials
    Routine Instr_JuiRef
    LoopInitiator Instr_Cont_trials loopType="TrialHandler"
      conditionsFile = Ratingtypes.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('condicion', 'A0'), ('Cue', 'CueA'), ('corrAns', 'Resp1')]),
        OrderedDict([('condicion', 'B0'), ('Cue', 'CueB'), ('corrAns', 'Resp2')]),
        OrderedDict([('condicion', 'C0'), ('Cue', 'CueC'), ('corrAns', None)])]
      Routine Instr_LeftCont_Ratings
      Routine Instr_RightCont_Ratings
    LoopTerminator Instr_Cont_trials
    Routine InstrRecall
    Routine RecallRating
    LoopInitiator InstrTest_trials loopType="TrialHandler"
      loopType = random
      nReps = 50
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      Routine Instr_test1
      Routine Instr_test2
      Routine Instr_test3
    LoopTerminator InstrTest_trials
    LoopInitiator Test_trials loopType="TrialHandler"
      conditionsFile = Testtypes.xlsx
      loopType = random
      nReps = 4
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      conditions:
        [OrderedDict([('condicion1', 'A-limit'), ('condicion2', 'A-nolimit'), ('Cue', 'CueA'), ('corrAns', 'Resp1')]),
        OrderedDict([('condicion1', 'B-nolimit'), ('condicion2', 'B-limit'), ('Cue', 'CueB'), ('corrAns', 'Resp2')]),
        OrderedDict([('condicion1', 'C-limit'), ('condicion2', 'C-nolimit'), ('Cue', 'CueC'), ('corrAns', 'RespC')])]
      Routine Test
      Routine RateRelieve_Test
    LoopTerminator Test_trials
    Routine Instr_JuiTest
    LoopInitiator Test_Cont_trials loopType="TrialHandler"
      Selected rows = 0, 1
      conditionsFile = Ratingtypes.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('condicion', 'A0'), ('Cue', 'CueA'), ('corrAns', 'Resp1')]),
        OrderedDict([('condicion', 'B0'), ('Cue', 'CueB'), ('corrAns', 'Resp2')]),
        OrderedDict([('condicion', 'C0'), ('Cue', 'CueC'), ('corrAns', 'RespC')])]
      Routine Test_ConfiRating1
      Routine Test_ConfiRating2
    LoopTerminator Test_Cont_trials
    Routine InstrAversiveness
    Routine US_10Spresentation
    Routine AverRating
  LoopTerminator Contrabalanceo
  Routine InstrRelieve
  Routine EC_NoUS
  Routine FinalRelieveRating
  Routine Despedida
