PsychoPy2experiment version="2020.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1,1,1]
  expName = Andrea_PrimeraParte
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Routines
  Routine Instruccion_consentimiento
    TextComponent text_Intro
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = A continuación se le presentará el consentimiento informado. Cuando lo termine de leer, apriete la barra espaciadora para avanzar.
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_seguir
      color = black
      letterHeight = 0.03
      pos = (-0, -0.45)
      startVal [time (s)] = 0.0
      text = Presione la barra espaciadora para seguir
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  Routine CONSENT1
    ImageComponent Consent1
      image = Captura1.png
      size = (1, 0.87)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_consent1
      color = black
      letterHeight = 0.03
      pos = (-0, -0.45)
      startVal [time (s)] = 0.0
      text = Presione la barra espaciadora para seguir leyendo
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  Routine CONSENT2
    ImageComponent Consent2
      image = Captura2.png
      size = (1, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      color = black
      letterHeight = 0.03
      pos = (-0, -0.45)
      startVal [time (s)] = 0.0
      text = Presione la barra espaciadora para seguir leyendo
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  Routine CONSENT3
    ImageComponent Consent3
      image = Captura3.png
      size = (1, 0.8)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos = (-0, -0.45)
      startVal [time (s)] = 0.0
      text = Presione la barra espaciadora para seguir leyendo
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  Routine CONSENT_Padres
    TextComponent instr_Padres
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Escriba 'si' o 'no' si autoriza que sus padres sean contactados

        Luego presione 'Enter'
    TextComponent text_Padres
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text_Padres.text = '';
      Begin Routine:
        modify = False
        text_Padres.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_Padres.text = text_Padres.text + ' '
            elif 'backspace' in keys:
                text_Padres.text = text_Padres.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_Padres.text = text_Padres.text + keys[0].upper()
                    modify = False
                else:
                    text_Padres.text = text_Padres.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text_Padres.text = text_Padres.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_Padres.text = text_Padres.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_Padres.text = text_Padres.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text_Padres.text)
        text_Padres.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
  Routine CONSENT_Nombre
    ImageComponent Consent_Nombre
      image = Captura5.png
      pos = (0, 0.1)
      size = (1, 0.55)
      startVal [time (s)] = 0.0
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    TextComponent instr
      color = black
      letterHeight = 0.03
      pos = (-.7, 0)
      startVal [time (s)] = 0.0
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      text:
        Firme con su
        nombre completo

        Luego presione
        'Enter'
    TextComponent text
      color = black
      font = Times New Roman
      letterHeight = 0.02
      pos = (-0.2, 0.04)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text.text = '';
      Begin Routine:
        modify = False
        text.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text.text = text.text + ' '
            elif 'backspace' in keys:
                text.text = text.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text.text = text.text + keys[0].upper()
                    modify = False
                else:
                    text.text = text.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text.text = text.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text.text = text.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text.text = text.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text.text)
        text.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
  Routine CONSENT_contacto
    TextComponent instr_contacto
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Escriba 'si' o 'no' si autoriza ser contactado en el futuro

        Luego presione 'Enter'
    TextComponent text_contacto
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text_contacto.text = '';
      Begin Routine:
        modify = False
        text_contacto.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_contacto.text = text_contacto.text + ' '
            elif 'backspace' in keys:
                text_contacto.text = text_contacto.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_contacto.text = text_contacto.text + keys[0].upper()
                    modify = False
                else:
                    text_contacto.text = text_contacto.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text_contacto.text = text_contacto.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_contacto.text = text_contacto.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_contacto.text = text_contacto.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text_Padres.text)
        text_Padres.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
  Routine FIRMA
    ImageComponent img_firma
      image = Captura4.png
      size = (1, 1)
      startVal [time (s)] = 0.0
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    TextComponent instr_firma
      color = black
      letterHeight = 0.03
      pos = (-0.7, -0.35)
      startVal [time (s)] = 0.0
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      text:
        Firme con su nombre

        Luego presione
        'Enter'
    TextComponent text_firma
      color = black
      font = Times New Roman
      letterHeight = 0.02
      pos = (-0.3, -0.37)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text_firma.text = '';
      Begin Routine:
        modify = False
        text_firma.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_firma.text = text_firma.text + ' '
            elif 'backspace' in keys:
                text_firma.text = text_firma.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_firma.text = text_firma.text + keys[0].upper()
                    modify = False
                else:
                    text_firma.text = text_firma.text + keys[0]

        text_nombre_3.text = text_nombre.text
        text_contacto_2.text = text_contacto.text
        text_Padres_3.text = text_Padres.text
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text_firma.text = text_firma.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_firma.text = text_firma.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_firma.text = text_firma.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text_Padres.text)
        text_Padres.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
    TextComponent text_nombre_3
      color = black
      font = Times New Roman
      letterHeight = 0.02
      pos = (-0.1, 0.36)
      startVal [time (s)] = 0.0
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    TextComponent text_Padres_3
      color = black
      font = Times New Roman
      letterHeight = 0.02
      pos = (0.3, -0.04)
      startVal [time (s)] = 0.0
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    TextComponent text_contacto_2
      color = black
      font = Times New Roman
      letterHeight = 0.02
      pos = (-0.25, -0.15)
      startVal [time (s)] = 0.0
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  Routine Datos_Edad
    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text_Edad.text = '';
      Begin Routine:
        modify = False
        text_Edad.text = ''
        event.clearEvents('keyboard')
        Datos.alignText='left'
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_Edad.text = text_Edad.text + ' '
            elif 'backspace' in keys:
                text_Edad.text = text_Edad.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_Edad.text = text_Edad.text + keys[0].upper()
                    modify = False
                else:
                    text_Edad.text = text_Edad.text + keys[0]
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text_Edad.text = text_Edad.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_Edad.text = text_Edad.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_Edad.text = text_Edad.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text_Padres.text)
        text_Padres.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
    TextComponent Datos
      color = black
      letterHeight = 0.04
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
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      text:
        Por favor complete los siguientes datos personales
        (presione 'Enter' después de completar cada campo)

        Edad:












        --
    TextComponent text_Edad
      color = black
      languageStyle = RTL
      letterHeight = 0.04
      pos = (-0.4, 0.19)
      startVal [time (s)] = 0.0
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      text:
        Por favor complete los siguientes datos personales
        (presione 'Enter' después de completar cada campo)

        Edad:












        --
  Routine Datos_Educacion
    TextComponent Datos_2
      color = black
      letterHeight = 0.04
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
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      text:
        Por favor complete los siguientes datos personales
        (presione 'Enter' después de completar cada campo)

        Edad:

        Género:

        Nivel Educacional:








        --
    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        modify = false;
      Begin Routine:
        modify = False
        event.clearEvents('keyboard')
        Datos_2.alignText='left'
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'return' in keys:
                continueRoutine = False

        text_Genero_2.text = text_Genero.text
        text_Edad_2.text = text_Edad.text
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text_Padres.text)
        text_Padres.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
    TextComponent text_Edad_2
      color = black
      letterHeight = 0.04
      pos = (-0.4, 0.19)
      startVal [time (s)] = 0.0
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    TextComponent text_Genero_2
      color = black
      letterHeight = 0.04
      pos = (-0.3, 0.1)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_Educacion
      categoryChoices = basica, media, universitaria   ,   postgrado
      forceEndRoutine = True
      showAccept = False
      size = 0.7
      startVal [time (s)] = 0.0
      stopVal [condition] = 10
      tickHeight = 0.5
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    RatingScaleComponent rating_Completacion
      categoryChoices = Completa, Incompleta
      forceEndRoutine = False
      pos = 0, -0.4
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Routine:
        rating_Educacion = visual.RatingScale(win=win, name='rating_Educacion', marker='triangle', size=0.7, pos=[0.0, 0.0], choices=['basica  ', '  media  ', 'universitaria  ', '  postgrado'], tickHeight=1.5, showAccept=False,textColor='black',lineColor='black')
        rating_Completacion = visual.RatingScale(win=win, name='rating_Completacion', marker='triangle', size=0.7, pos=[0.6, 0.0], choices=['Completa', 'Incompleta'], tickHeight=1.5, showAccept=False,textColor='black',lineColor='black',stretch=0.5)
  Routine Datos_Correo
    TextComponent Datos_4
      color = black
      letterHeight = 0.04
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
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      text:
        Por favor complete los siguientes datos personales
        (presione 'Enter' después de completar cada campo)

        Edad:

        Género:

        Nivel Educacional:



        Correo electrónico:




        --
    TextComponent text_Correo
      color = black
      letterHeight = 0.04
      pos = (0, -0.16)
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text_Correo.text = '';
      Begin Routine:
        modify = False
        text_Correo.text = ''
        event.clearEvents('keyboard')
        Datos_4.alignText='left'
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_Correo.text = text_Correo.text + ' '
            elif 'less' in keys:
                text_Correo.text = text_Correo.text + '@'
            elif 'period' in keys:
                text_Correo.text = text_Correo.text + '.'
            elif 'backspace' in keys:
                text_Correo.text = text_Correo.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_Correo.text = text_Correo.text + keys[0].upper()
                    modify = False
                else:
                    text_Correo.text = text_Correo.text + keys[0]

        text_Edad_4.text = text_Edad.text
        text_Genero_4.text = text_Genero.text
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'less'){
            textAdd = '@' // Add at symbol
        } else if (textAdd === 'period'){
            textAdd = '.' // Add a period
        } else if (textAdd === 'backspace') {
            text_Correo.text = text_Correo.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_Correo.text = text_Correo.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_Correo.text = text_Correo.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text_Padres.text)
        text_Padres.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
    TextComponent text_Edad_4
      color = black
      letterHeight = 0.04
      pos = (-0.4, 0.19)
      startVal [time (s)] = 0.0
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    TextComponent text_Educacion_3
      color = black
      letterHeight = 0.04
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
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    TextComponent text_Genero_4
      color = black
      letterHeight = 0.04
      pos = (-0.3, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_arroba
      color = black
      letterHeight = 0.03
      pos = (0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        (Para agregar el símbolo @,
        apriete la tecla '<')
  Routine Datos_CorreoPadres
    TextComponent Datos_5
      color = black
      letterHeight = 0.04
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
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      text:
        Por favor complete los siguientes datos personales
        (presione 'Enter' después de completar cada campo)

        Edad:

        Género:

        Nivel Educacional:



        Correo electrónico:

        Correo electrónico de su padre o madre:
        (no es obligación)

        --
    TextComponent text_Correo_Padres
      color = black
      letterHeight = 0.04
      pos = (0.2, -0.3)
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text_Correo_Padres.text = '';
      Begin Routine:
        modify = False
        text_Correo_Padres.text = ''
        event.clearEvents('keyboard')
        Datos_5.alignText='left'
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_Correo_Padres.text = text_Correo_Padres.text + ' '
            elif 'backspace' in keys:
                text_Correo_Padres.text = text_Correo_Padres.text[:-1]
            elif 'less' in keys:
                text_Correo_Padres.text = text_Correo_Padres.text + '@'
            elif 'period' in keys:
                text_Correo_Padres.text = text_Correo_Padres.text + '.'
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_Correo_Padres.text = text_Correo_Padres.text + keys[0].upper()
                    modify = False
                else:
                    text_Correo_Padres.text = text_Correo_Padres.text + keys[0]

        text_Edad_5.text = text_Edad.text
        text_Correo_2.text = text_Correo.text
        text_Genero_5.text = text_Genero.text
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'less'){
            textAdd = '@' // Add at symbol
        } else if (textAdd === 'period'){
            textAdd = '.' // Add a period
        } else if (textAdd === 'backspace') {
            text_Correo_Padres.text = text_Correo_Padres.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_Correo_Padres.text = text_Correo_Padres.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_Correo_Padres.text = text_Correo_Padres.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text_Padres.text)
        text_Padres.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
    TextComponent text_Edad_5
      color = black
      letterHeight = 0.04
      pos = (-0.4, 0.19)
      startVal [time (s)] = 0.0
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    TextComponent text_Educacion_4
      color = black
      letterHeight = 0.04
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
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    TextComponent text_Correo_2
      color = black
      letterHeight = 0.04
      pos = (0, -0.16)
      startVal [time (s)] = 0.0
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    TextComponent text_Genero_5
      color = black
      letterHeight = 0.04
      pos = (-0.3, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_arroba_2
      color = black
      letterHeight = 0.03
      pos = (0.5, -0.1)
      startVal [time (s)] = 0.0
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      text:
        (Para agregar el símbolo @,
        apriete la tecla '<')
  Routine Datos_Ocupacion
    TextComponent Datos_3
      color = black
      letterHeight = 0.04
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
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      text:
        Por favor complete los siguientes datos personales
        (presione 'Enter' después de completar cada campo)

        Edad:

        Género:

        Educación:

        Ocupación:






        --
    TextComponent text_ocupacion
      color = black
      letterHeight = 0.04
      pos = (-0.2, -0.08)
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text_ocupacion.text = '';
      Begin Routine:
        modify = False
        text_ocupacion.text = ''
        event.clearEvents('keyboard')
        Datos_3.alignText='left'
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_ocupacion.text = text_ocupacion.text + ' '
            elif 'backspace' in keys:
                text_ocupacion.text = text_ocupacion.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_ocupacion.text = text_ocupacion.text + keys[0].upper()
                    modify = False
                else:
                    text_ocupacion.text = text_ocupacion.text + keys[0]

        text_Edad_3.text = text_Edad.text
        text_Educacion_2.text = text_Educacion.text
        text_Genero_3.text = text_Genero.text
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text_ocupacion.text = text_ocupacion.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_ocupacion.text = text_ocupacion.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_ocupacion.text = text_ocupacion.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text_Padres.text)
        text_Padres.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
    TextComponent text_Edad_3
      color = black
      letterHeight = 0.04
      pos = (-0.4, 0.19)
      startVal [time (s)] = 0.0
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    TextComponent text_Educacion_2
      color = black
      letterHeight = 0.04
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
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    TextComponent text_Genero_3
      color = black
      letterHeight = 0.04
      pos = (-0.3, 0.1)
      startVal [time (s)] = 0.0
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  Routine Datos_Genero
    TextComponent text_Genero
      color = black
      letterHeight = 0.04
      pos = (-0.3, 0.1)
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Both
      Begin JS Routine:
        modify = false;
        text_Edad.text = '';
      Begin Routine:
        modify = False
        text_Genero.text = ''
        event.clearEvents('keyboard')
        Datos_6.alignText='left'
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'space' in keys:
                text_Genero.text = text_Genero.text + ' '
            elif 'backspace' in keys:
                text_Genero.text = text_Genero.text[:-1]
            elif 'lshift' in keys or 'rshift' in keys:
                modify = True
            elif 'return' in keys:
                continueRoutine = False
            else:
                if modify:
                    text_Genero.text = text_Genero.text + keys[0].upper()
                    modify = False
                else:
                    text_Genero.text = text_Genero.text + keys[0]

        text_Edad_6.text = text_Edad.text
      Each JS Frame:
        let theseKeys = psychoJS.eventManager.getKeys();
        if (theseKeys.length > 0) {  // at least one key was pressed
          textAdd = theseKeys[theseKeys.length-1];
          }


        if (textAdd === 'return') {
            textAdd = '';  // Add nothing
            continueRoutine = false;  // End routine (if that is what you want)
        } else if (textAdd === 'space') {
            textAdd = ' ';  // Add a space
        } else if (textAdd === 'backspace') {
            text_Genero.text = text_Genero.text.slice(0, -1);
            textAdd = undefined;
        } else if (['lshift', 'rshift'].includes(textAdd)) {
            modify = true;
        } else if (textAdd !== undefined) {
            if (modify) {
                text_Genero.text = text_Genero.text + textAdd.toUpperCase();
                modify = false;
            } else {
                text_Genero.text = text_Genero.text + textAdd
            }
            textAdd = undefined;
        }
      End JS Routine:
        psychoJS.experiment.addData("typedWord", text_Padres.text)
        text_Padres.setText('')  // empty the onscreen text ready for next input
      End Routine:
        thisExp.addData("typedWord", text.text)
    TextComponent Datos_6
      color = black
      letterHeight = 0.04
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
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      text:
        Por favor complete los siguientes datos personales
        (presione 'Enter' después de completar cada campo)

        Edad:

        Género:










        --
    TextComponent text_Edad_6
      color = black
      letterHeight = 0.04
      pos = (-0.4, 0.19)
      startVal [time (s)] = 0.0
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  Routine CUESTIONARO_IUS
    FormComponent form_IUS
      Data Format = rows
      Item Padding = 0.07
      Items = IUS.csv
      Pos = (0,0)
      Randomize = False
      Size = (1.5, 0.7)
      Style = ['light']
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_IUS
      color = black
      letterHeight = 0.02
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
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      text:
        Presiona 'Enter' al terminar. Sólo podrás avanzar una vez respondas todas las preguntas (total: 27 preguntas).

        A continuación, se presentan una serie de afirmaciones que demuestran cómo las personas pueden reaccionar ante la incertidumbre de la vida. Por favor, lea cada una de las frases atentamente y conteste a cada una de ellas teniendo en cuenta la  escala.
    KeyboardComponent key_resp_IUS
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent copyright_IUS
      color = black
      letterHeight = 0.015
      pos = [0, -0.42]
      startVal [time (s)] = 0.0
      text = Escala traducida al español por Flores, A., López, F. J., Vervliet, B., & Cobos, P. L. (2018). La utilización de esta escala es solo para fines académicos y no comerciales. 
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    CodeComponent code_28
      Code Type = Auto->JS
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      Each Frame:
        #if form_IUS.formComplete():
        #    text_12.text = ''
        #    if key_resp_IUS.keys == 'return':
        #        continueRoutine = False
        #else:
        #    key_resp_IUS.keys = []

        if key_resp_IUS.keys == 'return':
            continueRoutine = False
    TextComponent text_12
      color = red
      letterHeight = 0.02
      pos = [-0.6, -0.42]
      startVal [time (s)] = 0.0
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      text:
        Aún faltan
        preguntas
        por responder
  Routine CUESTIONARIO_STAIE
    FormComponent form_STAIE
      Data Format = rows
      Item Padding = 0.07
      Items = STAIE.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1.5, 0.7)
      Style = ['light']
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_STAIE
      color = black
      letterHeight = 0.02
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
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      text:
        Presiona 'Enter' al terminar. Sólo podrás avanzar una vez respondas todas las preguntas (total: 19 preguntas).

        Responde como te sientes ahora mismo en una escala de NADA a MUCHO.
    KeyboardComponent key_resp_STAIE
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent copyright_STAIE
      color = black
      letterHeight = 0.015
      pos = [0, -0.42]
      startVal [time (s)] = 0.0
      text = Escala traducida al español por Vera-Villarroel, P., Celis-Atenas, K., Córdova-Rubio, N., Buela-Casal, G., & Spielberger, C. (2007). La utilización de esta escala es solo para fines académicos y no comerciales. 
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    CodeComponent code_29
      Code Type = Auto->JS
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      Each Frame:
        #if form_STAIE.formComplete():
        #    text_13.text = ''
        #    if key_resp_STAIE.keys == 'return':
        #        continueRoutine = False
        #else:
        #    key_resp_STAIE.keys = []


        if key_resp_STAIE.keys == 'return':
            continueRoutine = False
    TextComponent text_13
      color = red
      letterHeight = 0.02
      pos = [-0.6, -0.42]
      startVal [time (s)] = 0.0
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      text:
        Aún faltan
        preguntas
        por responder
  Routine CUESTIONARIO_STAIR
    FormComponent form_STAIR
      Data Format = rows
      Item Padding = 0.07
      Items = STAIR.csv
      Pos = (0, 0)
      Randomize = False
      Size = (1.5, 0.7)
      Style = ['light']
      Text Height = 0.02
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    TextComponent text_STAIR
      color = black
      letterHeight = 0.02
      pos = (0, 0.42)
      startVal [time (s)] = 0.0
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      text:
        Presiona 'Enter' al terminar. Sólo podrás avanzar una vez respondas todas las preguntas (total: 20 preguntas).

        Responde como te sientes en general en una escala de NADA a MUCHO.
    KeyboardComponent key_resp_STAIR
      allowedKeys = 'return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent copyright_STAIR
      color = black
      letterHeight = 0.015
      pos = [0, -0.42]
      startVal [time (s)] = 0.0
      text = Escala traducida al español por Vera-Villarroel, P., Celis-Atenas, K., Córdova-Rubio, N., Buela-Casal, G., & Spielberger, C. (2007). La utilización de esta escala es solo para fines académicos y no comerciales. 
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    CodeComponent code_30
      Code Type = Auto->JS
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      Each Frame:
        #if form_STAIR.formComplete():
        #    text_14.text = ''
        #    if key_resp_STAIR.keys == 'return':
        #        continueRoutine = False
        #else:
        #    key_resp_STAIR.keys = []

        if key_resp_STAIR.keys == 'return':
            continueRoutine = False
    TextComponent text_14
      color = red
      letterHeight = 0.02
      pos = [-0.6, -0.42]
      startVal [time (s)] = 0.0
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      text:
        Aún faltan
        preguntas
        por responder
  Routine Pavloviano
    CodeComponent code_31
      Code Type = Py
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      Begin Experiment:
        NumAleat = randint(1,100)
        mTurk = str(NumAleat%2)

        ITIVals = randint(1,5)
      Begin Routine:
        if NumAleat%2 == 0:
            ECImage = ecimg_v0
            EIImage = eiimg_v0
        if NumAleat%2 == 1:
            ECImage = ecimg_v1
            EIImage = eiimg_v1

        if ITIVals == 1:
            ITI = ITI1
        if ITIVals == 2:
            ITI = ITI2
        if ITIVals == 3:
            ITI = ITI3
        if ITIVals == 4:
            ITI = ITI4
        if ITIVals == 5:
            ITI = ITI5
    ImageComponent Ncue
      image = original.jpg
      pos = (0, 0.1)
      size = [0.8, 0.8]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent EC
      image [set every repeat] = $ECImage
      pos = (0, 0.1)
      size = (0.8, 0.8)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    RatingScaleComponent ExpectativaEI1
      forceEndRoutine = False
      high = 100
      labels = Nada de probable, Muy probable
      low = 1
      pos = 0, -0.6
      scaleDescription = ¿Cuan probable es que venga la imagen desagradable?
      showAccept = False
      singleClick = True
      size = 1.0
      startVal [time (s)] = 3
      stopVal [condition] = 9
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    CodeComponent code_11
      Code Type = Py
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      Begin Routine:
        ExpectativaEI1 = visual.RatingScale(win=win, name='ExpectativaEI1', disappear=True,marker='triangle', size=1, pos=[0, -0.8], low=0, high=100, precision=100, labels=['Con seguridad \n NO se presentará', 'Con seguridad \n se presentará'], scale='¿Cuán probable es que se presente la imagen desagradable?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
      Each Frame:
        if ExpectativaEI1.status == STARTED and t>=12:
            ExpectativaEI1.tStop = t
            ExpectativaEI1.frameNStop = frameN
            win.timeOnFlip(ExpectativaEI1, 'tStopRefresh')
            ExpectativaEI1.setAutoDraw(False)
    ImageComponent EI
      image [set every repeat] = $EIImage
      startVal [time (s)] = 12
      stopVal [duration (s)] = 4
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    CodeComponent code_26
      Code Type = Auto->JS
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      Begin Experiment:
        import serial
        ser = serial.Serial('COM3', 115200)
        ser.write(bytes('0'.encode()))
      Each Frame:
        text_15.text = mTurk

        if EIImage == 'miedo1.jpg' or EIImage == 'miedo2.jpg':
            if t>= 12:
                win.color = [-1, -1, -1]

        if Ncue.status == STARTED:
            ser.write(bytes('2'.encode()))

        if EC.status == STARTED:
            ser.write(bytes('4'.encode()))

        if EI.status == STARTED:
            ser.write(bytes('8'.encode()))
      End Routine:
        win.color = [1, 1, 1]
    TextComponent text_15
      color = black
      letterHeight = 0.01
      pos = (-0.7, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
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  Routine P1_1
    RatingScaleComponent P1
      durationEstim = 10
      forceEndRoutine = False
      high = 100
      labels = Nada de ansiedad, Máxima ansiedad
      low = 1
      pos = 0, 0
      scaleDescription = ¿Que tanta ansiedad le produce la luz Roja?
      showAccept = False
      singleClick = True
      size = 1
      startVal [time (s)] = 0
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    CodeComponent code_12
      Code Type = Py
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      Begin Routine:
        P1 = visual.RatingScale(win=win, name='P1', marker='triangle', size=1, pos=[0.0, 0.0], low=0, high=100, precision=100, labels=['NO ansioso/a', ' Muy ansioso/a'], scale='¿Cuán ansioso te sientes frente a la luz Roja?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
  Routine P2_2
    RatingScaleComponent P2
      durationEstim = 10
      forceEndRoutine = False
      high = 100
      labels = Nada de Ansiedad, Máxima ansiedad
      low = 1
      pos = 0, 0
      scaleDescription = ¿Que tanta ansiedad le produce la luz Amarilla?
      showAccept = False
      singleClick = True
      size = 1
      startVal [time (s)] = 0
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    CodeComponent code_13
      Code Type = Py
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      Begin Routine:
        P2 = visual.RatingScale(win=win, name='P2', marker='triangle', size=1, pos=[0.0, 0.0], low=0, high=100, precision=100, labels=['NO ansioso/a', ' Muy ansioso/a'], scale='¿Cuán ansioso te sientes frente a la luz Amarilla?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
  Routine P3_1
    RatingScaleComponent P3
      durationEstim = 10
      forceEndRoutine = False
      high = 100
      labels = Nada de ansiedad, Máxima ansiedad
      low = 1
      pos = 0, 0
      scaleDescription = ¿Que tanta ansiedad le produce la luz Verde?
      showAccept = False
      singleClick = True
      size = 1
      startVal [time (s)] = 0.0
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    CodeComponent code_14
      Code Type = Py
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      Begin Routine:
        P3 = visual.RatingScale(win=win, name='P2', marker='triangle', size=1, pos=[0.0, 0.0], low=0, high=100, precision=100, labels=['NO ansioso/a', ' Muy ansioso/a'], scale='¿Cuán ansioso te sientes frente a la luz Verde?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
  Routine MiniIntrucciones
    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        A continuación apareceran luces de diferentes colores, debes poner atención a lo que cada una de estas indica.
        En la parte inferior de la pantalla aparecerán algunas preguntas que deberás responder.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_seguir_3
      color = black
      letterHeight = 0.03
      pos = (-0.7, 0)
      startVal [time (s)] = 0.0
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      text:
        Presione
        barra espaciadora
        para
        seguir
  Routine Pavloviano2
    CodeComponent code_32
      Code Type = Auto->JS
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      Begin Routine:
        if NumAleat%2 == 0:
            ECImage2 = ecimg2_v0
            EIImage2 = eiimg2_v0
        if NumAleat%2 == 1:
            ECImage2 = ecimg2_v1
            EIImage2 = eiimg2_v1
    ImageComponent Ncue2
      image = original.jpg
      pos = (0, 0.1)
      size = [0.8, 0.8]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent EC2
      image [set every repeat] = $ECImage2
      pos = (0, 0.1)
      size = (0.8, 0.8)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    RatingScaleComponent ExpectativaEI2
      forceEndRoutine = False
      high = 100
      labels = Nada de probable, Muy probable
      low = 1
      pos = 0, -0.6
      scaleDescription = ¿Cuan probable es que venga la imagen desagradable?
      showAccept = False
      singleClick = True
      size = 1.0
      startVal [time (s)] = 3
      stopVal [condition] = 9
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        ExpectativaEI2 = visual.RatingScale(win=win, name='ExpectativaEI2', disappear=True,marker='triangle', size=1, pos=[0, -0.8], low=0, high=100, precision=100, labels=['Con seguridad \n NO se presentará', 'Con seguridad \n se presentará'], scale='¿Cuán probable es que se presente la imagen desagradable?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
      Each Frame:
        if ExpectativaEI2.status == STARTED and t>=12:
            ExpectativaEI2.tStop = t
            ExpectativaEI2.frameNStop = frameN
            win.timeOnFlip(ExpectativaEI2, 'tStopRefresh')
            ExpectativaEI2.setAutoDraw(False)

        text_16.text = mTurk
    ImageComponent I2
      image [set every repeat] = $EIImage2
      startVal [time (s)] = 12
      stopVal [duration (s)] = 4
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    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        if EIImage2 == 'miedo1.jpg' or EIImage2 == 'miedo2.jpg':
            if t>= 12:
                win.color = [-1, -1, -1]
      End Routine:
        win.color = [1, 1, 1]
    TextComponent text_16
      color = black
      letterHeight = 0.01
      pos = (-0.7, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14
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  Routine P2_3
    CodeComponent code_16
      Code Type = Py
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      Begin Routine:
        P4 = visual.RatingScale(win=win, name='P4', marker='triangle', size=1, pos=[0.0, -0.8], low=0, high=100, precision=100, labels=['NO ansioso/a', ' Muy ansioso/a'], scale='¿Cuán ansioso te sientes frente a la luz Roja?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
      Each Frame:
        if slider_2.getRating():
            continueRoutine = False
    TextComponent text_21
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ¿Cuán ansioso/a te sientes frente a la luz Roja?
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    SliderComponent slider_2
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = 'NO ansioso/a', ' Muy ansioso/a'
      pos = (0, -0.4)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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    ImageComponent image
      image = 1.jpg
      pos = (0, 0.1)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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  Routine P3_2
    CodeComponent code_18
      Code Type = Py
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      Begin Routine:
        P6 = visual.RatingScale(win=win, name='P6', marker='triangle', size=1, pos=[0.0, -0.8], low=0, high=100, precision=100, labels=['NO ansioso/a', ' Muy ansioso/a'], scale='¿Cuán ansioso te sientes frente a la luz Verde?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
      Each Frame:
        if slider_4.getRating():
            continueRoutine = False
    ImageComponent image_3
      image = 7.jpg
      pos = (0, 0.1)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    SliderComponent slider_4
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = 'NO ansioso/a', ' Muy ansioso/a'
      pos = (0, -0.40)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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    TextComponent text_23
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ¿Cuán ansioso/a te sientes frente a la luz Verde?
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  Routine instruccion
    TextComponent text_5
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        En esta fase del experimento, aparecerá un botón en la pantalla. Sólo cuando el botón esté presente, presiona la barra espaciadora cuantas veces puedas y así evitarás que la imagen desagradable aparezca.
        Deberás estar atento.
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_seguir_4
      color = black
      letterHeight = 0.03
      pos = (0, -0.40)
      startVal [time (s)] = 0.0
      text = Presione barra espaciadora para continuar
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    VariableComponent ECImage3
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  Routine PR1_1
    RatingScaleComponent PR7
      durationEstim = 15
      forceEndRoutine = False
      high = 100
      labels = Nada de alivio, Máximo alivio
      low = 1
      pos = 0, 0
      scaleDescription = ¿Cuánto alivio sentiste luego de apretar el boton en presencia de la luz Amarilla?
      showAccept = False
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = Py
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      Begin Experiment:
        PR7 = visual.RatingScale(win=win, name='PR7', marker='triangle', size=1.0, pos=[0.0, 0.0], low=0, high=100, precision=100, labels=['Nada de alivio', ' Mucho alivio'], scale='¿Cuánto alivio sentiste luego de apretar el boton en presencia de la luz Amarilla?',textColor='black', lineColor='black', singleClick=True, showAccept=False)
  Routine PR2_1
    CodeComponent code_22
      Code Type = Py
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      Begin Experiment:
        PR8 = visual.RatingScale(win=win, name='PR8', marker='triangle', size=1.0, pos=[0.0, 0.0], low=0, high=100, precision=100, labels=['Nada de alivio', ' Mucho alivio'], scale='¿Cuánto alivio sentiste luego de apretar el boton en presencia de la luz Roja?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
      Each Frame:
        if slider_5.getRating():
            continueRoutine = False
    TextComponent text_26
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ¿Cuánto alivio sentiste luego de apretar el botón en presencia de esta luz?
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    ImageComponent image_4
      image [set every repeat] = $ECImage3
      pos = (0, 0.1)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    SliderComponent slider_5
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = 'Nada de alivio', ' Mucho alivio'
      pos = (0, -0.40)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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  Routine PR3_1
    RatingScaleComponent PR9
      durationEstim = 15
      forceEndRoutine = False
      high = 100
      labels = Nada de alivio, Máximo alivio
      low = 1
      pos = 0, 0
      scaleDescription = ¿Cuánto alivio sentiste luego de apretar el boton en presencia de la luz Verde?
      showAccept = False
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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    CodeComponent code_23
      Code Type = Py
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      Begin Experiment:
        PR9 = visual.RatingScale(win=win, name='PR9', marker='triangle', size=1.0, pos=[0.0, 0.0], low=0, high=100, precision=100, labels=['Nada de alivio', ' Mucho alivio'], scale='¿Cuánto alivio sentiste luego de apretar el boton en presencia de la luz Verde?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
  Routine PR1_2
    RatingScaleComponent PR10
      durationEstim = 10
      forceEndRoutine = False
      high = 100
      labels = Nada de alivio, Mucho alivio
      low = 1
      pos = 0, 0
      scaleDescription = ¿Cuánto alivio sentiste luego de apretar el boton en presencia de la luz Amarilla?
      showAccept = False
      singleClick = True
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine PR2_2
    CodeComponent code_24
      Code Type = Py
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      Begin Experiment:
        PR11 = visual.RatingScale(win=win, name='PR11', marker='triangle', size=1.0, pos=[0.0, 0.0], low=0, high=100, precision=100, labels=['Nada de alivio', ' Mucho alivio'], scale='¿Cuánto alivio sentiste luego de apretar el boton en presencia de la luz Amarilla?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
      Each Frame:
        if slider_6.getRating():
            continueRoutine = False
    SliderComponent slider_6
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = 'Nada de alivio', ' Mucho alivio'
      pos = (0, -0.40)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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    TextComponent text_27
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ¿Cuánto alivio sentiste luego de apretar el botón en presencia de la luz Amarilla?
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    ImageComponent image_7
      image = 4.jpg
      pos = (0, 0.1)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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  Routine PR3_2
    CodeComponent code_25
      Code Type = Py
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      Begin Experiment:
        PR12 = visual.RatingScale(win=win, name='PR12', marker='triangle', size=1.0, pos=[0.0, 0.0], low=0, high=100, precision=100, labels=['Nada de alivio', ' Mucho alivio'], scale='¿Cuánto alivio sentiste luego de apretar el boton en presencia de la luz Verde?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
      Each Frame:
        if slider_7.getRating():
            continueRoutine = False
    SliderComponent slider_7
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = 'Nada de alivio', ' Mucho alivio'
      pos = (0, -0.40)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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    TextComponent text_28
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ¿Cuánto alivio sentiste luego de apretar el botón en presencia de la luz Verde?
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    ImageComponent image_8
      image = 7.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Intrucciones2
    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = A continuación verás diferentes imagenes. Ante la presencia del botón podrás apretar la barra espaciadora.
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_seguir_5
      color = black
      letterHeight = 0.03
      pos = (-0, -0.40)
      startVal [time (s)] = 0.0
      text = Presione barra espaciadora para continuar
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  Routine AVISO
    TextComponent text_7
      color = black
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Durante las siguiente semana el investigador responsable se pondrá en contacto con usted.
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  Routine Despedida
    TextComponent text_8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = ¡Muchas gracias por tu participación! Con esto ayudas al desarrollo de la ciencia en Chile :)
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  Routine Operante
    CodeComponent code_35
      Code Type = Auto->JS
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      Begin Experiment:
        ITIValsOp = randint(1,5)
      Begin Routine:
        if NumAleat%2 == 0:
            ECImage3 = ecimg3_v0
            EIImage3 = eiimg3_v0
        if NumAleat%2 == 1:
            ECImage3 = ecimg3_v1
            EIImage3 = eiimg3_v1

        if ITIValsOp == 1:
            ITI = ITI1
        if ITIValsOp == 2:
            ITI = ITI2
        if ITIValsOp == 3:
            ITI = ITI3
        if ITIValsOp == 4:
            ITI = ITI4
        if ITIValsOp == 5:
            ITI = ITI5
    ImageComponent NCUE
      image = original.jpg
      size = [0.8,0.8]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent estCond
      image [set every repeat] = $ECImage3
      size = [0.8, 0.8]
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9.1
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    ImageComponent boton
      image = button.png
      size = (0.2, 0.2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    ImageComponent US
      image [set every repeat] = $EIImage3
      startVal [time (s)] = 12.1
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      store = all keys
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    CodeComponent code_19
      Code Type = Both
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
      Begin JS Routine:
        lista = [];
        timer = new core.Clock();
      Begin Routine:
        Evitar = 0
      Each Frame:
        text_9.text = mTurk
        if EIImage3 == 'miedo1.jpg' or EIImage3 == 'miedo2.jpg':
            if t>= 12:
                win.color = [-1, -1, -1]
        if 'space' in key_resp_4.keys and OperanteClock.getTime() < 6:
            Evitar = 1
        if t > 12 and Evitar == 1:
            if '4.jpg' in ECImage3:
                #continueRoutine = False
                win.color = [1, 1, 1]
                US.image = 'Avoided.png'
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if ((timer.getTime() > 4)) {
            if ((estCond.image === "4.bmp")) {
                key = event.getKeys();
                if (_pj.in_es6("space", key)) {
                    lista.append("space");
                    console.log(lista);
                    console.log(timer.getTime());
                }
            }
        } else {
            lista = [];
        }
        if ((_pj.in_es6("space", lista) && (timer.getTime() > 12))) {
            continueRoutine = false;
            lista = [];
        }
      End Routine:
        win.color = [1, 1, 1]
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
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    TextComponent text_9
      color = black
      letterHeight = 0.01
      pos = (-0.7, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
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  Routine OperanteB2
    CodeComponent code_36
      Code Type = Auto->JS
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      Begin Routine:
        if NumAleat%2 == 0:
            ECImage4 = ecimg4_v0
            EIImage4 = eiimg4_v0
        if NumAleat%2 == 1:
            ECImage4 = ecimg4_v1
            EIImage4 = eiimg4_v1
    ImageComponent NCUE_2
      image = original.jpg
      size = [0.8,0.8]
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    ImageComponent estCond_2
      image [set every repeat] = $ECImage4
      size = [0.8, 0.8]
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9.1
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    ImageComponent boton_2
      image = button.bmp
      size = (0.1, 0.1)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    ImageComponent US_2
      image [set every repeat] = $EIImage4
      startVal [time (s)] = 12.1
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_6
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      store = all keys
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    CodeComponent code_20
      Code Type = Both
      Begin JS Experiment:
        /* Syntax Error: Fix Python code */
      Begin JS Routine:
        lista = [];
        timer = new core.Clock();
      Begin Routine:
        Evitar = 0
      Each Frame:
        text_10.text = mTurk
        if EIImage4 == 'miedo1.jpg' or EIImage4 == 'miedo2.jpg':
            if t>= 12:
                win.color = [-1, -1, -1]

        if 'space' in key_resp_6.keys and OperanteB2Clock.getTime() < 6:
            Evitar = 1

        if t > 12 and Evitar == 1:
            if '4.jpg' in ECImage4:
                continueRoutine = False
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if ((timer.getTime() > 4)) {
            if ((estCond.image === "4.bmp")) {
                key = event.getKeys();
                if (_pj.in_es6("space", key)) {
                    lista.append("space");
                    console.log(lista);
                    console.log(timer.getTime());
                }
            }
        } else {
            lista = [];
        }
        if ((_pj.in_es6("space", lista) && (timer.getTime() > 12))) {
            continueRoutine = false;
            lista = [];
        }
      End Routine:
        win.color = [1, 1, 1]
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
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    TextComponent text_10
      color = black
      letterHeight = 0.01
      pos = (-0.7, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 14
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  Routine CONSENT_4
    ImageComponent Consent3_2
      image = Captura4.png
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_11
      color = black
      letterHeight = 0.03
      pos = (-0, -0.45)
      startVal [time (s)] = 0.0
      text = Presione la barra espaciadora para seguir leyendo
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  Routine Generalizacion
    CodeComponent code_39
      Code Type = Both
      Begin Experiment:
        ITIValsGen1 = randint(1,5)
      Begin Routine:
        if NumAleat%2 == 0:
            EC_Gen = Gen_V0
            EI_Gen = EI_Gen_V0
        if NumAleat%2 == 1:
            EC_Gen = Gen_V1
            EI_Gen = EI_Gen_V1

        if ITIValsGen1 == 1:
            ITI = ITI1
        if ITIValsGen1 == 2:
            ITI = ITI2
        if ITIValsGen1 == 3:
            ITI = ITI3
        if ITIValsGen1 == 4:
            ITI = ITI4
        if ITIValsGen1 == 5:
            ITI = ITI5
    ImageComponent NcueG
      image = original.jpg
      size = [0.8,0.8]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.1
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    ImageComponent ECGen
      image [set every repeat] = $EC_Gen
      size = [0.8,0.8]
      startVal [time (s)] = 3
      stopVal [duration (s)] = 9
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    ImageComponent BotonGen
      image [set every repeat] = button.png
      size = (0.2, 0.2)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
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    ImageComponent US_3
      image [set every repeat] = $EI_Gen
      startVal [time (s)] = 12.1
      stopVal [duration (s)] = 4
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    KeyboardComponent key_resp_15
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 4
      stopVal [duration (s)] = 2
      store = all keys
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    KeyboardComponent key_resp_14
      allowedKeys [set every repeat] = 'space'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
      store = all keys
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    TextComponent text_32
      color = black
      letterHeight = 0.01
      pos = (-0.7, -0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 16
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    CodeComponent code_42
      Code Type = Auto->JS
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      Begin Routine:
        Evitar = 0
      Each Frame:
        if EI_Gen == 'miedo1.jpg' or EI_Gen == 'miedo2.jpg':
            if t>= 12:
                win.color = [-1, -1, -1]
        if 'space' in key_resp_15.keys and GeneralizacionClock.getTime() < 6:
            Evitar = 1
        if t > 12 and Evitar == 1:
            if '4.jpg' in EC_Gen:
                #continueRoutine = False
                win.color = [1, 1, 1]
                US_3.image = 'Avoided.png'
      End Routine:
        win.color = [1, 1, 1]
  Routine Generalizacion_2
  Routine GEN2
    CodeComponent code_40
      Code Type = Both
      Begin Experiment:
        ITIValsGen2 = randint(1,5)
      Begin Routine:
        if NumAleat%2 == 0:
            EC_Gen2 = Gen_V0
            EI_Gen2 = EI_Gen_V0
        if NumAleat%2 == 1:
            EC_Gen2 = Gen_V1
            EI_Gen2 = EI_Gen_V1

        if ITIValsGen2 == 1:
            ITI = ITI1
        if ITIValsGen2 == 2:
            ITI = ITI2
        if ITIValsGen2 == 3:
            ITI = ITI3
        if ITIValsGen2 == 4:
            ITI = ITI4
        if ITIValsGen2 == 5:
            ITI = ITI5
    ImageComponent image_5
      image = original.jpg
      pos = (0, 0.1)
      size = [0.8,0.8]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    ImageComponent image_6
      image [set every repeat] = $EC_Gen2
      pos = (0, 0.1)
      size = [0.8,0.8]
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 9
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    RatingScaleComponent rating_4
      forceEndRoutine = True
      high = 100
      labels = Nada de probable, Muy probable
      low = 1
      pos = 0, -0.6
      scaleDescription = ¿Cuan probable es que venga la imagen desagradable?
      singleClick = True
      size = 1.0
      startVal [time (s)] = 3
      stopVal [time (s)] = 12
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    CodeComponent code_34
      Code Type = Py
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      Begin Routine:
        rating_4 = visual.RatingScale(win=win, name='rating_4', marker='triangle', size=1.0, pos=[0.0, -0.8], low=0, high=100, precision=100, labels=['Con seguridad \n NO se presentará', 'Con seguridad \n se presentará'], scale='¿Cuan probable es que venga la imagen desagradable?', textColor='black', lineColor='black', showAccept=False, singleClick=True)
    ImageComponent EI_Gen
      image [set every repeat] = $EI_Gen2
      startVal [time (s)] = 12
      stopVal [duration (s)] = 4
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  Routine Intruccion_GEN
    TextComponent text_17
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = En la parte inferior de la imagen se desplegará una escala para evaluar cuán probable es que se presente la imagen desagradable después de la luz. Con tu mouse debes situarte en dicha escala horizontal donde el lado izquierdo indica que con seguridad no se presentará la imagen desagradable y el derecho que con seguridad sí se presentará. Las opciones intermedias indican niveles intermedios de probabilidad. 
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    KeyboardComponent key_GEN
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_seguirultimo
      color = black
      letterHeight = 0.03
      pos = (-0, -0.40)
      startVal [time (s)] = 0.0
      text = Presione la barra espaciadora para continuar
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  Routine PR2
    CodeComponent code_17
      Code Type = Py
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      Begin Routine:
        P5 = visual.RatingScale(win=win, name='P5', marker='triangle', size=1, pos=[0.0, -0.8], low=0, high=100, precision=100, labels=['NO ansioso/a', ' Muy ansioso/a'], scale='¿Cuán ansioso te sientes frente a la luz Amarilla?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
      Each Frame:
        if slider_3.getRating():
            continueRoutine = False
    SliderComponent slider_3
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = 'NO ansioso/a', ' Muy ansioso/a'
      pos = (0, -0.40)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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    TextComponent text_22
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ¿Cuán ansioso/a te sientes frente a la luz Amarilla?
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    ImageComponent image_2
      image = 4.jpg
      pos = (0, 0.1)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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  Routine ITI
    ImageComponent ITI_TIEMPO
      image = ITI.PNG
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
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    CodeComponent code_41
      Code Type = Auto->JS
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      Each Frame:
        ser.write(bytes('0'.encode()))
  Routine Preparese
    TextComponent Instrucciones
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
      text = Preparese. El experimento comenzará en algunos segundos. 
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  Routine Ejemplo_instruciones
    TextComponent text_18
      color = black
      letterHeight = 0.03
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
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      text:
        Este es un ejemplo del tipo de escala visual que verás durante el experimento. Con tu mouse debes posicionarte en la opción que mejor representa tu respuesta.

        Recuerda que el lado izquierdo indica que con seguridad no se presentará la imagen desagradable y el derecho que con seguridad sí se presentará. Las opciones intermedias indican niveles intermedios de probabilidad.
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SliderComponent slider
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = 'Con seguridad \n NO se presentará',' ',' ',' ',' ',' ',' ',' ',' ','Con seguridad \no se presentará'
      pos = (0, -0.2)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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    TextComponent text_19
      color = black
      letterHeight = 0.03
      pos = (-0, -0.45)
      startVal [time (s)] = 0.0
      text = Presione la barra espaciadora para continuar
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  Routine Instrucciones_ansiedad
    TextComponent text_20
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = A continuación, se desplegará una escala para evaluar cuán ansioso te sientes ante las diferentes luces. Con tu mouse debes situarte en dicha escala horizontal donde el lado izquierdo indica que no te encuentras ansioso y el lado derecho que te encuentras muy ansioso. Niveles intermedios indican niveles intermedios de ansiedad.
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    TextComponent text_31
      color = black
      letterHeight = 0.03
      pos = (-0, -0.40)
      startVal [time (s)] = 0.0
      text = Presione barra espaciadora para  continuar
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    KeyboardComponent key_resp_17
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instrucciones_alivio
    TextComponent text_24
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = A continuación, se desplegará una escala para evaluar cuanto alivio sentiste cuando apretaste el botón ante cada una de las luces. Con tu mouse debes situarte en dicha escala horizontal, donde el lado izquierdo indica nada de alivio y el lado derecho significa mucho alivio. Niveles intermedios indican niveles intermedios de alivio.
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    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_25
      color = black
      letterHeight = 0.03
      pos = (-0, -0.40)
      startVal [time (s)] = 0.0
      text = Presione la barra espaciadora para continuar
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  Routine evaluacion_perros
    ImageComponent image_9
      image [set every repeat] = miedo1.jpg
      pos = (0, 0.1)
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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    SliderComponent slider_8
      color = black
      forceEndRoutine = True
      granularity = 0
      labels = 'Muy agradable','Muy desagradable'
      pos = (0, -0.40)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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    TextComponent text_29
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ¿Cuán desagradable te pareció esta imagen?
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    CodeComponent code_37
      Code Type = Both
  Routine evaluacion_perros2
    ImageComponent image_10
      image [set every repeat] = miedo3.jpg
      pos = (0, 0.1)
      size = (1.5, 0.8)
      startVal [time (s)] = 0.0
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    SliderComponent slider_9
      color = black
      forceEndRoutine = True
      granularity = 0
      labels = 'Muy agradable','Muy desagradable'
      pos = (0, -0.4)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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    TextComponent text_30
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ¿Cuán desagradable te pareció esta imagen?
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    CodeComponent code_38
      Code Type = Auto->JS
  Routine ITI_GEN
    ImageComponent image_11
      image = ITI.PNG
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
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  Routine ITI_GEN2
    ImageComponent image_12
      image = ITI.PNG
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ITI
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  Routine Habituacion
  Routine habituacion
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      volume = 100
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  Routine Habituacion_2
    ImageComponent image_13
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9.0
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    SoundComponent sound_2
      startVal [time (s)] = 6
      stopVal [duration (s)] = 0.05
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    SoundComponent sound_3
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.05
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  Routine PR_Gen
    CodeComponent code_43
      Code Type = Py
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      Begin Experiment:
        PR8 = visual.RatingScale(win=win, name='PR8', marker='triangle', size=1.0, pos=[0.0, 0.0], low=0, high=100, precision=100, labels=['Nada de alivio', ' Mucho alivio'], scale='¿Cuánto alivio sentiste luego de apretar el boton en presencia de la luz Roja?', textColor='black', lineColor='black', singleClick=True, showAccept=False)
      Each Frame:
        if slider_10.getRating():
            continueRoutine = False
    TextComponent text_33
      color = black
      letterHeight = 0.03
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = ¿Cuánto alivio sentiste luego de apretar el botón en presencia de esta luz?
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    ImageComponent image_14
      image [set every repeat] = $EC_Gen
      pos = (0, 0.1)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    SliderComponent slider_10
      color = black
      forceEndRoutine = False
      granularity = 0
      labels = 'Nada de alivio', ' Mucho alivio'
      pos = (0, -0.40)
      size = (1.0, 0.015)
      startVal [time (s)] = 0.0
      styles = ['rating', 'triangleMarker']
      ticks = (1,10,20,30,40,50,60,70,80,90,100)
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Flow
  Routine Instruccion_consentimiento
  Routine CONSENT1
  Routine CONSENT2
  Routine CONSENT3
  Routine CONSENT_4
  Routine CONSENT_Nombre
  Routine CONSENT_Padres
  Routine CONSENT_contacto
  Routine Datos_Edad
  Routine Datos_Genero
  Routine Datos_Educacion
  Routine Datos_Correo
  Routine Datos_CorreoPadres
  Routine CUESTIONARO_IUS
  Routine CUESTIONARIO_STAIE
  Routine CUESTIONARIO_STAIR
  Routine Ejemplo_instruciones
  Routine Preparese
  LoopInitiator AdqB1 loopType="TrialHandler"
    conditionsFile = Adq.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('ecimg_v0', '7.jpg'), ('eiimg_v0', 'impresora.png'), ('ecimg_v1', '1.jpg'), ('eiimg_v1', 'impresora.png'), ('ITI1', 12), ('ITI2', 14), ('ITI3', 16), ('ITI4', 12), ('ITI5', 18)]),
      OrderedDict([('ecimg_v0', '4.jpg'), ('eiimg_v0', 'miedo1.jpg'), ('ecimg_v1', '4.jpg'), ('eiimg_v1', 'miedo1.jpg'), ('ITI1', 14), ('ITI2', 16), ('ITI3', 14), ('ITI4', 18), ('ITI5', 12)]),
      OrderedDict([('ecimg_v0', '1.jpg'), ('eiimg_v0', 'miedo2.jpg'), ('ecimg_v1', '7.jpg'), ('eiimg_v1', 'miedo2.jpg'), ('ITI1', 16), ('ITI2', 18), ('ITI3', 12), ('ITI4', 16), ('ITI5', 14)]),
      OrderedDict([('ecimg_v0', '7.jpg'), ('eiimg_v0', 'impresora.png'), ('ecimg_v1', '1.jpg'), ('eiimg_v1', 'impresora.png'), ('ITI1', 18), ('ITI2', 12), ('ITI3', 18), ('ITI4', 14), ('ITI5', 16)])]
    Routine Pavloviano
    Routine ITI
  LoopTerminator AdqB1
  Routine Instrucciones_ansiedad
  Routine P2_3
  Routine PR2
  Routine P3_2
  Routine instruccion
  LoopInitiator Operante_Alivio loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator FaseOperante1 loopType="TrialHandler"
      conditionsFile = AdqOp2.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('ecimg3_v0', '4.jpg'), ('eiimg3_v0', 'miedo1.jpg'), ('ecimg3_v1', '4.jpg'), ('eiimg3_v1', 'miedo1.jpg')]),
        OrderedDict([('ecimg3_v0', '1.jpg'), ('eiimg3_v0', 'miedo2.jpg'), ('ecimg3_v1', '7.jpg'), ('eiimg3_v1', 'miedo2.jpg')]),
        OrderedDict([('ecimg3_v0', '7.jpg'), ('eiimg3_v0', 'impresora.png'), ('ecimg3_v1', '1.jpg'), ('eiimg3_v1', 'impresora.png')])]
      Routine Operante
      Routine PR2_1
    LoopTerminator FaseOperante1
    Routine ITI
  LoopTerminator Operante_Alivio
  Routine Intrucciones2
  LoopInitiator Trials_Gen loopType="TrialHandler"
    loopType = random
    nReps = 1
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    LoopInitiator GenTest loopType="TrialHandler"
      conditionsFile = Gen.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Gen_V0', '1.jpg'), ('EI_Gen_V0', 'miedo2.jpg'), ('Gen_V1', '1.jpg'), ('EI_Gen_V1', 'impresora.png')]),
        OrderedDict([('Gen_V0', '2.jpg'), ('EI_Gen_V0', 'Avoided.png'), ('Gen_V1', '2.jpg'), ('EI_Gen_V1', 'Avoided.png')]),
        OrderedDict([('Gen_V0', '3.jpg'), ('EI_Gen_V0', 'Avoided.png'), ('Gen_V1', '3.jpg'), ('EI_Gen_V1', 'Avoided.png')]),
        OrderedDict([('Gen_V0', '4.jpg'), ('EI_Gen_V0', 'miedo1.jpg'), ('Gen_V1', '4.jpg'), ('EI_Gen_V1', 'miedo1.jpg')]),
        OrderedDict([('Gen_V0', '5.jpg'), ('EI_Gen_V0', 'Avoided.png'), ('Gen_V1', '5.jpg'), ('EI_Gen_V1', 'Avoided.png')]),
        OrderedDict([('Gen_V0', '6.jpg'), ('EI_Gen_V0', 'Avoided.png'), ('Gen_V1', '6.jpg'), ('EI_Gen_V1', 'Avoided.png')]),
        OrderedDict([('Gen_V0', '7.jpg'), ('EI_Gen_V0', 'impresora.png'), ('Gen_V1', '7.jpg'), ('EI_Gen_V1', 'miedo2.jpg')])]
      Routine Generalizacion
      Routine PR_Gen
    LoopTerminator GenTest
    Routine ITI_GEN
  LoopTerminator Trials_Gen
  Routine Intruccion_GEN
  LoopInitiator Gen2 loopType="TrialHandler"
    conditionsFile = Gen.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Gen_V0', '1.jpg'), ('EI_Gen_V0', 'miedo2.jpg'), ('Gen_V1', '1.jpg'), ('EI_Gen_V1', 'impresora.png')]),
      OrderedDict([('Gen_V0', '2.jpg'), ('EI_Gen_V0', 'Avoided.png'), ('Gen_V1', '2.jpg'), ('EI_Gen_V1', 'Avoided.png')]),
      OrderedDict([('Gen_V0', '3.jpg'), ('EI_Gen_V0', 'Avoided.png'), ('Gen_V1', '3.jpg'), ('EI_Gen_V1', 'Avoided.png')]),
      OrderedDict([('Gen_V0', '4.jpg'), ('EI_Gen_V0', 'miedo1.jpg'), ('Gen_V1', '4.jpg'), ('EI_Gen_V1', 'miedo1.jpg')]),
      OrderedDict([('Gen_V0', '5.jpg'), ('EI_Gen_V0', 'Avoided.png'), ('Gen_V1', '5.jpg'), ('EI_Gen_V1', 'Avoided.png')]),
      OrderedDict([('Gen_V0', '6.jpg'), ('EI_Gen_V0', 'Avoided.png'), ('Gen_V1', '6.jpg'), ('EI_Gen_V1', 'Avoided.png')]),
      OrderedDict([('Gen_V0', '7.jpg'), ('EI_Gen_V0', 'impresora.png'), ('Gen_V1', '7.jpg'), ('EI_Gen_V1', 'miedo2.jpg')])]
    Routine GEN2
    Routine ITI_GEN2
  LoopTerminator Gen2
  Routine evaluacion_perros
  Routine evaluacion_perros2
  Routine AVISO
  Routine Despedida
